<?xml version='1.0'?>
<model cmeta:id="FCepsilonRI_to_Grb" name="FCepsilonRI_to_Grb" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_first_order_rate_constant">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_first_order_rate_constant">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="FCepsilonRI">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="k_f1" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r1" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f2" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f3" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_f4" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r4" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f5" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f6" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r6" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f7" public_interface="in" units="first_order_rate_constant"/>
        <variable name="Lyn" public_interface="in" units="nM"/>
        <variable name="FC" public_interface="in" units="nM"/>
        <!--FC available to be phosphorylated (e.g. activated by HLA-G)-->
        <variable name="pFC" public_interface="in" units="nM"/>
        <!--phosphorylated FC-->
        <variable name="Syk" public_interface="in" units="nM"/>
        <variable name="pSyk" public_interface="in" units="nM"/>
        <variable name="pGrb2" public_interface="in" units="nM"/>
        <variable name="pFCLyn" public_interface="in" units="nM"/>
        <variable name="pFCSyk" public_interface="in" units="nM"/>
        <variable name="pSykGrb2" public_interface="in" units="nM"/>
        <variable name="Pi" public_interface="in" units="nM"/>
        <variable name="Grb2" public_interface="in" units="nM"/>
        <variable name="pLyn" public_interface="in" units="nM"/>
        <variable name="J1" units="flux"/>
        <variable name="J2" units="flux"/>
        <variable name="J3" units="flux"/>
        <variable name="J4" units="flux"/>
        <variable name="J5" units="flux"/>
        <variable name="J6" units="flux"/>
        <variable name="J7" public_interface="in" units="flux"/>
        <variable name="J_hGdl4FC" public_interface="in" units="flux"/>
        <variable name="hGdl4FC" public_interface="in" units="nM"/>
        <!--rate of activation of FC-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>FC</ci>
                        <ci>pLyn</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>pFCLyn</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <times/>
                    <ci>k_f2</ci>
                    <ci>pFCLyn</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <times/>
                    <ci>k_f3</ci>
                    <ci>Pi</ci>
                    <ci>Lyn</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f4</ci>
                        <ci>pFC</ci>
                        <ci>Syk</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r4</ci>
                        <ci>pFCSyk</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <times/>
                    <ci>k_f5</ci>
                    <ci>pFCSyk</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J6</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f6</ci>
                        <ci>pSyk</ci>
                        <ci>Grb2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r6</ci>
                        <ci>pSykGrb2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <times/>
                    <ci>k_f7</ci>
                    <ci>pSykGrb2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hGdl4FC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J_hGdl4FC</ci>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>FC</ci>
                </apply>
                <apply>
                    <plus/>
                    <ci>J_hGdl4FC</ci>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pFC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Syk</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J4</ci>
                    </apply>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pSyk</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J5</ci>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Lyn</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pLyn</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J1</ci>
                    </apply>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pFCLyn</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pFCSyk</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J4</ci>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pSykGrb2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J6</ci>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Grb2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J6</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
