<?xml version='1.0'?>
<model name="ERKPP_TNF" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="ERKPP_TNF">
        <variable name="time" public_interface="in" units="second"/>
        <variable name="J31" public_interface="out" units="flux"/>
        <variable name="J32" public_interface="out" units="flux"/>
        <variable name="k_f31" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f32" public_interface="in" units="first_order_rate_constant"/>
        <variable name="ERKPP_TNF_c" public_interface="in" units="nM"/>
        <variable name="ERKPP_n" public_interface="in" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J31</ci>
                <apply>
                    <times/>
                    <ci>k_f31</ci>
                    <ci>ERKPP_n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J32</ci>
                <apply>
                    <times/>
                    <ci>k_f32</ci>
                    <ci>ERKPP_TNF_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ERKPP_TNF_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J31</ci>
                    <ci>J32</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
