<?xml version='1.0'?>
<model name="Rac_PAK" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="time" public_interface="out" units="second"/>
    </component>
    <component name="RacPAK">
        <variable name="time" public_interface="in" units="second"/>
        <variable name="RacPAK_J31" public_interface="out" units="flux"/>
        <variable name="RacPAK_J32" public_interface="out" units="flux"/>
        <variable name="RacPAK_J33" units="flux"/>
        <variable name="RacPAK_J34" units="flux"/>
        <variable initial_value="41.7342" name="k_f31" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="17266.9" name="K_31" public_interface="out" units="nM"/>
        <variable initial_value="0.283667" name="k_f32" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="36281.3" name="K_32" public_interface="out" units="nM"/>
        <variable initial_value="0.0722305" name="k_f33" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="76687.5" name="K_33" public_interface="out" units="nM"/>
        <variable initial_value="0.000469954" name="k_f34" public_interface="out" units="first_order_rate_constant"/>
        <variable name="RacGDP" public_interface="in" units="nM"/>
        <variable initial_value="6500" name="PAK" units="nM"/>
        <variable initial_value="1" name="GAP" units="nM"/>
        <variable initial_value="0" name="RacGTP" public_interface="out" units="nM"/>
        <variable name="pvav" public_interface="in" units="nM"/>
        <variable name="PAKa" public_interface="in" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>RacPAK_J31</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f31</ci>
                        <ci>RacGDP</ci>
                        <ci>pvav</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_31</ci>
                        <ci>RacGDP</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>RacPAK_J32</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f32</ci>
                        <ci>RacGTP</ci>
                        <ci>GAP</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_32</ci>
                        <ci>RacGTP</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>RacPAK_J33</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f33</ci>
                        <ci>RacGTP</ci>
                        <ci>PAK</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_33</ci>
                        <ci>PAK</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>RacPAK_J34</ci>
                <apply>
                    <times/>
                    <ci>k_f34</ci>
                    <ci>PAKa</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>RacGTP</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>RacPAK_J31</ci>
                    <ci>RacPAK_J32</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>GAP</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>RacPAK_J32</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>PAK</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>RacPAK_J33</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>PAKa</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>RacPAK_J33</ci>
                    <ci>RacPAK_J34</ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="RacPAK" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
</model>
