<?xml version='1.0'?>
<model cmeta:id="NFAT_to_cytokines" name="NFAT_to_cytokines" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="NFAT_to_IFN">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="NFATN_n" public_interface="in" units="nM"/>
        <variable name="IFN_c" public_interface="in" units="nM"/>
        <variable name="JNFAT_n_IFN" public_interface="in" units="flux"/>
        <variable name="k_f1" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JNFAT_n_IFN</ci>
                <apply>
                    <times/>
                    <ci>k_f1</ci>
                    <ci>NFATN_n</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="NFAT_to_TNF">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="NFATN_n" public_interface="in" units="nM"/>
        <variable name="TNF_c" public_interface="in" units="nM"/>
        <variable name="JNFAT_n_TNF" public_interface="in" units="flux"/>
        <variable name="k_f2" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JNFAT_n_TNF</ci>
                <apply>
                    <times/>
                    <ci>k_f2</ci>
                    <ci>NFATN_n</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="NFAT_to_GSMCSF">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="NFATN_n" public_interface="in" units="nM"/>
        <variable name="GSMCSF_c" public_interface="in" units="nM"/>
        <variable name="JNFAT_n_GSMCSF" public_interface="in" units="flux"/>
        <variable name="k_f3" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JNFAT_n_GSMCSF</ci>
                <apply>
                    <times/>
                    <ci>k_f3</ci>
                    <ci>NFATN_n</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
