<?xml version='1.0'?>
<model cmeta:id="cytokine_release" name="cytokine_release" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="IFN_release">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="IFN_c" public_interface="in" units="nM"/>
        <variable name="IFN_released" public_interface="in" units="nM"/>
        <variable name="vm_vcw" public_interface="in" units="dimensionless"/>
        <variable name="JIFN_rel" public_interface="in" units="flux"/>
        <variable name="k_f4" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JIFN_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f4</ci>
                    <ci>IFN_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>IFN_released</ci>
                </apply>
                <apply>
                    <divide/>
                    <ci>JIFN_rel</ci>
                    <ci>vm_vcw</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="TNF_release">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="TNF_c" public_interface="in" units="nM"/>
        <variable name="TNF_released" public_interface="in" units="nM"/>
        <variable name="vm_vcw" public_interface="in" units="dimensionless"/>
        <variable name="JTNF_rel" public_interface="in" units="flux"/>
        <variable name="k_f5" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JTNF_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f5</ci>
                    <ci>TNF_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>TNF_released</ci>
                </apply>
                <apply>
                    <divide/>
                    <ci>JTNF_rel</ci>
                    <ci>vm_vcw</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="GSMCSF_release">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="GSMCSF_c" public_interface="in" units="nM"/>
        <variable name="GSMCSF_released" public_interface="in" units="nM"/>
        <variable name="vm_vcw" public_interface="in" units="dimensionless"/>
        <variable name="JGSMCSF_rel" public_interface="in" units="flux"/>
        <variable name="k_f6" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JGSMCSF_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f6</ci>
                    <ci>GSMCSF_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>GSMCSF_released</ci>
                </apply>
                <apply>
                    <divide/>
                    <ci>JGSMCSF_rel</ci>
                    <ci>vm_vcw</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
