<?xml version='1.0'?>
<model cmeta:id="intracellular_cytokines" name="intracellular_cytokines" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="intracellular_NFAT_to_IFN">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="NFAT_IFN_c" public_interface="in" units="nM"/>
        <variable name="JNFAT_IFN_rel" public_interface="in" units="flux"/>
        <variable name="JNFAT_n_IFN" public_interface="in" units="flux"/>
        <variable name="k_f4" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JNFAT_IFN_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f4</ci>
                    <ci>NFAT_IFN_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>NFAT_IFN_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>JNFAT_n_IFN</ci>
                    <ci>JNFAT_IFN_rel</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="intracellular_NFAT_to_TNF">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="NFAT_TNF_c" public_interface="in" units="nM"/>
        <variable name="JNFAT_TNF_rel" public_interface="in" units="flux"/>
        <variable name="JNFAT_n_TNF" public_interface="in" units="flux"/>
        <variable name="k_f5" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JNFAT_TNF_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f5</ci>
                    <ci>NFAT_TNF_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>NFAT_TNF_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>JNFAT_n_TNF</ci>
                    <ci>JNFAT_TNF_rel</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="intracellular_NFAT_to_GSMCSF">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="NFAT_GSMCSF_c" public_interface="in" units="nM"/>
        <variable name="JNFAT_GSMCSF_rel" public_interface="in" units="flux"/>
        <variable name="JNFAT_n_GSMCSF" public_interface="in" units="flux"/>
        <variable name="k_f6" public_interface="in" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JNFAT_GSMCSF_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f6</ci>
                    <ci>NFAT_GSMCSF_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>NFAT_GSMCSF_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>JNFAT_n_GSMCSF</ci>
                    <ci>JNFAT_GSMCSF_rel</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="intracellular_ERKPP_to_IFN">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="JERKPP_IFN_rel" public_interface="in" units="flux"/>
        <variable name="k_f42" public_interface="in" units="first_order_rate_constant"/>
        <variable name="ERKPP_IFN_c" public_interface="in" units="nM"/>
        <variable name="JERKPP_n_IFN" public_interface="in" units="flux"/>
        <!--        var ERKPP_n: nM {init: 70, pub: out};-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JERKPP_IFN_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f42</ci>
                    <ci>ERKPP_IFN_c</ci>
                </apply>
            </apply>
            <!--        //ode(ERKPP_n, t) = -J41-J43;-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ERKPP_IFN_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>JERKPP_n_IFN</ci>
                    <ci>JERKPP_IFN_rel</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="intracellular_ERKPP_to_GMCSF">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="JERKPP_GMCSF_rel" public_interface="in" units="flux"/>
        <variable name="k_f44" public_interface="in" units="first_order_rate_constant"/>
        <variable name="ERKPP_GMCSF_c" public_interface="in" units="nM"/>
        <variable name="JERKPP_n_GMCSF" public_interface="in" units="flux"/>
        <!--        var ERKPP_n: nM {pub: in};-->
        <!--        //ode(ERKPP_n, t) = -J43;-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>JERKPP_GMCSF_rel</ci>
                <apply>
                    <times/>
                    <ci>k_f44</ci>
                    <ci>ERKPP_GMCSF_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ERKPP_GMCSF_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>JERKPP_n_GMCSF</ci>
                    <ci>JERKPP_GMCSF_rel</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="IFN_c">
        <variable name="IFN_c" public_interface="in" units="nM"/>
        <variable name="NFAT_IFN_c" public_interface="in" units="nM"/>
        <variable name="ERKPP_IFN_c" public_interface="in" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>IFN_c</ci>
                <apply>
                    <plus/>
                    <ci>NFAT_IFN_c</ci>
                    <ci>ERKPP_IFN_c</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="TNF_c">
        <variable name="TNF_c" public_interface="in" units="nM"/>
        <variable name="NFAT_TNF_c" public_interface="in" units="nM"/>
        <variable name="ERKPP_TNF_c" public_interface="in" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>TNF_c</ci>
                <apply>
                    <plus/>
                    <ci>NFAT_TNF_c</ci>
                    <ci>ERKPP_TNF_c</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="GMCSF_c">
        <variable name="GMCSF_c" public_interface="in" units="nM"/>
        <variable name="NFAT_GSMCSF_c" public_interface="in" units="nM"/>
        <variable name="ERKPP_GMCSF_c" public_interface="in" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>GMCSF_c</ci>
                <apply>
                    <plus/>
                    <ci>NFAT_GSMCSF_c</ci>
                    <ci>ERKPP_GMCSF_c</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
