<?xml version='1.0'?>
<model name="hG_activating_lilrb" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
        *******************************************************
        ***         U   N   I   T   S                       ***
        *******************************************************
        -->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="per_nM">
        <unit exponent="-1" units="nM"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
     *********************************************************
     ***       C   O   M   P   O   N   E   N   T   S       ***
     *********************************************************
     -->
    <component name="environment">
        <variable name="time" public_interface="out" units="s"/>
    </component>
    <!--*********************
***   hG_lilrb  ***
*********************-->
    <component name="hG_activating_lilrb">
        <variable name="time" public_interface="in" units="second"/>
        <variable name="J21" units="flux"/>
        <variable name="J22" units="flux"/>
        <variable name="J23" units="flux"/>
        <variable name="J24" units="flux"/>
        <variable name="J25" units="flux"/>
        <variable name="J26" public_interface="in" units="flux"/>
        <variable name="J27" units="flux"/>
        <variable name="J_hGinhibitionlil" public_interface="out" units="flux"/>
        <variable name="k_f21" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r21" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f22" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r22" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f23" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f24" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r24" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f25" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f26" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r26" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f27" public_interface="in" units="first_order_rate_constant"/>
        <variable name="hG" public_interface="in" units="nM"/>
        <variable name="shp" public_interface="in" units="nM"/>
        <variable name="plck" public_interface="in" units="nM"/>
        <variable name="cd45" public_interface="in" units="nM"/>
        <variable name="lilrb" public_interface="in" units="nM"/>
        <variable name="pshp_lil" public_interface="in" units="nM"/>
        <variable initial_value="0" name="hGlil" units="nM"/>
        <variable initial_value="0" name="hGlilplck" units="nM"/>
        <variable initial_value="0" name="hGplil" units="nM"/>
        <variable initial_value="0" name="hGplilcd45" units="nM"/>
        <variable initial_value="0" name="hGplilshp" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J21</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f21</ci>
                        <ci>hG</ci>
                        <ci>lilrb</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r21</ci>
                        <ci>hGlil</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J22</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f22</ci>
                        <ci>hGlil</ci>
                        <ci>plck</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r22</ci>
                        <ci>hGlilplck</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J23</ci>
                <apply>
                    <times/>
                    <ci>k_f23</ci>
                    <ci>hGlilplck</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J24</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f24</ci>
                        <ci>hGplil</ci>
                        <ci>cd45</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r24</ci>
                        <ci>hGplilcd45</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J25</ci>
                <apply>
                    <times/>
                    <ci>k_f25</ci>
                    <ci>hGplilcd45</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J26</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f26</ci>
                        <ci>hGplil</ci>
                        <ci>shp</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r26</ci>
                        <ci>hGplilshp</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J27</ci>
                <apply>
                    <times/>
                    <ci>k_f27</ci>
                    <ci>hGplilshp</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_hGinhibitionlil</ci>
                <apply>
                    <minus/>
                    <ci>J21</ci>
                </apply>
            </apply>
            <!--ode(hG, time) = -J21; #in comp HLAG_receptor-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lilrb</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J21</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hGlil</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J21</ci>
                        <ci>J22</ci>
                    </apply>
                    <ci>J25</ci>
                    <ci>J27</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hGlilplck</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J22</ci>
                    <ci>J23</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hGplil</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>J23</ci>
                        <ci>J24</ci>
                    </apply>
                    <ci>J26</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hGplilcd45</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J24</ci>
                    <ci>J25</ci>
                </apply>
            </apply>
            <!--        ode(shp, time) = -J26; #in comp shp-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hGplilshp</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J26</ci>
                    <ci>J27</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pshp_lil</ci>
                </apply>
                <ci>J27</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="hG_activating_lilrb" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
</model>
