<?xml version='1.0'?>
<model name="receptors_to_shp" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
        *******************************************************
        ***         U   N   I   T   S                       ***
        *******************************************************
      -->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <component name="shp">
        <variable name="time" public_interface="in" units="second"/>
        <variable name="shp" public_interface="in" units="nM"/>
        <variable name="pshp" public_interface="out" units="nM"/>
        <variable name="pshp_kir2dl" public_interface="in" units="nM"/>
        <variable name="pshp_dl4" public_interface="in" units="nM"/>
        <variable name="pshp_lil" public_interface="in" units="nM"/>
        <variable name="pshp_dl1" public_interface="in" units="nM"/>
        <variable name="pshp_dl2" public_interface="in" units="nM"/>
        <variable name="pshp_cd94" public_interface="in" units="nM"/>
        <variable name="J19" public_interface="in" units="flux"/>
        <variable name="J71" public_interface="in" units="flux"/>
        <variable name="J72" public_interface="in" units="flux"/>
        <variable name="J81" public_interface="in" units="flux"/>
        <variable name="J82" public_interface="in" units="flux"/>
        <variable name="J6" public_interface="in" units="flux"/>
        <variable name="J16" public_interface="in" units="flux"/>
        <variable name="J26" public_interface="in" units="flux"/>
        <variable name="J36" public_interface="in" units="flux"/>
        <variable name="J46" public_interface="in" units="flux"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>shp</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <ci>J6</ci>
                                </apply>
                                <ci>J16</ci>
                            </apply>
                            <ci>J26</ci>
                        </apply>
                        <ci>J36</ci>
                    </apply>
                    <ci>J46</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>pshp</ci>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>pshp_kir2dl</ci>
                                        <ci>pshp_dl4</ci>
                                        <ci>pshp_lil</ci>
                                        <ci>pshp_dl1</ci>
                                        <ci>pshp_dl2</ci>
                                        <ci>pshp_cd94</ci>
                                    </apply>
                                    <ci>J19</ci>
                                </apply>
                                <ci>J71</ci>
                            </apply>
                            <ci>J72</ci>
                        </apply>
                        <ci>J81</ci>
                    </apply>
                    <ci>J82</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
