// creator: Family Cooling; Given Michael; Orgname Auckland Bioengineering Institute; Orgunit University of Auckland; m.cooling@auckland.ac.nz
// title: Sensitivity of NFAT Cycling to Cytosolic Calcium Concentration: Implications for Hypertrophic Signals in Cardiac Myocytes (Tomida-derived calcium protocol)
def model pNK_main as
  def import using "../dupont_1997_decomposed/IP3_Ca_oscillation.cellml" for
    comp R_des using comp R_des;
    comp C_cyto using comp C_cyto;
    comp I_ra using comp I_ra;
    comp I_rable using comp I_rable;
    comp IP3 using comp IP3;
    comp V_PLC using comp V_PLC;
    comp V_3K using comp V_3K;
    comp V_5P using comp V_5P;
  enddef;
  def import using "../cooling_2009/calcium_TomidaProtocol.cellml" for
    comp calcium using comp calcium;
  enddef;
  def import using "../cooling_2009/calcineurin_TomidaProtocol.cellml" for
    comp calcineurin using comp calcineurin;
  enddef;
  def import using "../cooling_2009/NFATCycling_TomidaProtocol.cellml" for
    comp NFAT_Cycling using comp NFAT_Cycling;
  enddef;
  def import using "../cytokine_release/nuclear_NFAT_withcytokines.cellml" for
    comp nuclearNFAT using comp nuclearNFAT;
  enddef;
  def import using "../cytokine_release/NFAT_to_cytokines.cellml" for
    comp NFAT_to_IFN using comp NFAT_to_IFN;
    comp NFAT_to_TNF using comp NFAT_to_TNF;
    comp NFAT_to_GSMCSF using comp NFAT_to_GSMCSF;
  enddef;
  def import using "../cytokine_release/ERKPP_to_cytokines.cellml" for
    comp ERKPP_to_IFN using comp ERKPP_to_IFN;
    comp ERKPP_to_GMCSF using comp ERKPP_to_GMCSF;
  enddef;
  def import using "../cytokine_release/cytokine_release.cellml" for
    comp IFN_release using comp IFN_release;
    comp TNF_release using comp TNF_release;
    comp GSMCSF_release using comp GSMCSF_release;
  enddef;
  def import using "../cytokine_release/intracellular_cytokines.cellml" for
    comp intracellular_NFAT_to_IFN using comp intracellular_NFAT_to_IFN;
    comp intracellular_NFAT_to_TNF using comp intracellular_NFAT_to_TNF;
    comp intracellular_NFAT_to_GSMCSF using comp intracellular_NFAT_to_GSMCSF;
    comp intracellular_ERKPP_to_IFN using comp intracellular_ERKPP_to_IFN;
    comp intracellular_ERKPP_to_GMCSF using comp intracellular_ERKPP_to_GMCSF;
    comp IFN_c using comp IFN_c;
    comp TNF_c using comp TNF_c;
    comp GMCSF_c using comp GMCSF_c;
  enddef;
  def import using "../HLAG_to_PI3K/PI3K_activation.cellml" for
    comp PI3K using comp PI3K;
  enddef;
  def import using "../HLAG_to_PI3K/FCepsilonRI_to_Grb.cellml" for
    comp FCepsilonRI using comp FCepsilonRI;
  enddef;
  def import using "../HLAG_to_PI3K/HLAG_receptor.cellml" for
    comp hG_activating_dl4 using comp hG_activating_dl4;
    comp hgdl4_FC using comp hgdl4_FC;
  enddef;
  def import using "../vav/vav.cellml" for
    comp vav_activation using comp vav_activation;
    comp vav_inhibition using comp vav_inhibition;
  enddef;
  def import using "../Rac_PAK/Rac_PAK.cellml" for
    comp RacPAK using comp RacPAK;
  enddef;
  def import using "../hatakeyama_2003_decomposed/PI3K_hatakeyama.cellml" for
    comp PI3K_hatakeyama using comp PI3K_hatakeyama;
  enddef;
  def import using "../hatakeyama_2003_decomposed/RasGDPtoRasGTP_hatakeyama.cellml" for
    comp RasGDPtoRasGTP using comp RasGDPtoRasGTP;
  enddef;
  def import using "../hatakeyama_2003_decomposed/Raf_hatakeyama.cellml" for
    comp RAF using comp RAF;
  enddef;
  def import using "../hatakeyama_2003_decomposed/MEK_hatakeyama.cellml" for
    comp MEK using comp MEK;
  enddef;
  def import using "../hatakeyama_2003_decomposed/ERK_hatakeyama.cellml" for
    comp ERK using comp ERK;
  enddef;
  def import using "../hatakeyama_2003_decomposed/PIP3_Akt_hatakeyama.cellml" for
    comp Akt using comp Akt;
  enddef;
  def import using "../zap70_activation/zap70_activation.cellml" for
    comp zap70 using comp zap70;
  enddef;
  def import using "../MAPK_to_TNF/tcr.cellml" for
    comp tcr using comp tcr;
  enddef;
  def import using "../MAPK_to_TNF/pzap70.cellml" for
    comp pzap70 using comp pzap70;
  enddef;
  def import using "../MAPK_to_TNF/plc.cellml" for
    comp plc using comp plc;
  enddef;
  def import using "../MAPK_to_TNF/shc.cellml" for
    comp shc using comp shc;
  enddef;
  def import using "../MAPK_to_TNF/lat.cellml" for
    comp lat using comp lat;
  enddef;
  def import using "../MAPK_to_TNF/ERKPP_translocation.cellml" for
    comp ERKPPtranslocation using comp ERKPPtranslocation;
  enddef;
  def import using "../MAPK_to_TNF/ERKPP_to_TNF.cellml" for
    comp ERKPP_TNF using comp ERKPP_TNF;
  enddef;
  def import using "../receptor_activation/itg_receptor.cellml" for
    comp icam_activating_itg using comp icam_activating_itg;
  enddef;
  def import using "../receptor_activation/hE_activating_cd94.cellml" for
    comp hE_activating_cd94 using comp hE_activating_cd94;
  enddef;
  def import using "../receptor_activation/hC_activating_kir2ds1.cellml" for
    comp hC_activating_kir2ds1 using comp hC_activating_kir2ds1;
  enddef;
  def import using "../inhibitors_to_shp/hC_activating_kir2dl.cellml" for
    comp kir2dl using comp kir2dl;
  enddef;
  def import using "../inhibitors_to_shp/hG_activating_kir2dl4.cellml" for
    comp hG_activating_kir2dl4 using comp hG_activating_kir2dl4;
  enddef;
  def import using "../inhibitors_to_shp/hG_activating_lilrb.cellml" for
    comp hG_activating_lilrb using comp hG_activating_lilrb;
  enddef;
  def import using "../inhibitors_to_shp/hA_activating_kir3dl1.cellml" for
    comp hA_activating_kir3dl1 using comp hA_activating_kir3dl1;
  enddef;
  def import using "../inhibitors_to_shp/hB_activating_kir3dl2.cellml" for
    comp hB_activating_kir3dl2 using comp hB_activating_kir3dl2;
  enddef;
  def import using "../inhibitors_to_shp/shp.cellml" for
    comp shp using comp shp;
  enddef;
  def import using "../mapping/mapping_a.cellml" for
    comp hC_mapk using comp hC_mapk;
    comp hE_mapk using comp hE_mapk;
  enddef;
  def import using "../mapping/mapping_b.cellml" for
    comp icam_mapk using comp icam_mapk;
  enddef;
  def import using "../mapping/mapping_c.cellml" for
    comp mapk_vav using comp mapk_vav;
    comp pvav_RacPAK using comp pvav_RacPAK;
  enddef;
  def import using "../mapping/mapping_d.cellml" for
    comp PAK_MEK using comp PAK_MEK;
  enddef;
  def import using "../mapping/mapping_f.cellml" for
    comp dupont_NFAT using comp dupont_NFAT;
  enddef;
  def import using "../mapping/mapping_g.cellml" for
    comp lat_plc using comp lat_plc;
  enddef;
  def import using "../mapping/mapping_h.cellml" for
    comp pi3k_vav using comp pi3k_vav;
  enddef;
  def import using "../mapping/mapping_i.cellml" for
    comp dephospho_pzap_bySHP using comp dephospho_pzap_bySHP;
    comp dephospho_pplc_bySHP using comp dephospho_pplc_bySHP;
  enddef;
  // *******************************************************
  // ***         U   N   I   T   S                       ***
  // *******************************************************
  def unit s as
    unit second;
  enddef;
  def unit nM as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit per_nM as
    unit nM {expo: -1};
  enddef;
  def unit flux as
    unit nM;
    unit s {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit s {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit nM {expo: -1};
    unit s {expo: -1};
  enddef;
  def unit third_order_rate_constant as
    unit nM {expo: -2};
    unit s {expo: -1};
  enddef;
  def unit fourth_order_rate_constant as
    unit nM {expo: -3};
    unit s {expo: -1};
  enddef;
  def unit fifth_order_rate_constant as
    unit nM {expo: -4};
    unit s {expo: -1};
  enddef;
  // *********************************************************
  // ***       C   O   M   P   O   N   E   N   T   S       ***
  // *********************************************************

  def comp environment as
    var time: s {pub: out};
  enddef;

  def comp free_parameters as
    var NFAT2cyt_k_f1: first_order_rate_constant {init: 0.0097, pub: out};
    var NFAT2cyt_k_f2: first_order_rate_constant {init: 0.029, pub: out};
    var NFAT2cyt_k_f3: first_order_rate_constant {init: 0.5, pub: out};
    var ERKPP2cyt_k_f41: first_order_rate_constant {init: 0.0004, pub: out};
    var ERKPP2cyt_k_f43: first_order_rate_constant {init: 6.53e-6, pub: out};
    var CytRel_k_f4: first_order_rate_constant {init: 0.068, pub: out};
    var CytRel_k_f5: first_order_rate_constant {init: 23.1163, pub: out};
    var CytRel_k_f6: first_order_rate_constant {init: 0.05, pub: out};
    var CytRel_k_f42: first_order_rate_constant {init: 0.0531, pub: out};
    var CytRel_k_f44: first_order_rate_constant {init: 0.6511, pub: out};
    var PI3K_k_f2: second_order_rate_constant {init: 0.00891653, pub: out};
    var PI3K_k_r2: first_order_rate_constant {init: 0.00611373, pub: out};
    var PI3K_k_f3: first_order_rate_constant {init: 14.6231, pub: out};
    var hG_activating_dl4_k_f10: second_order_rate_constant {init: 1.141382e-5, pub: out};
    var hG_activating_dl4_k_r10: first_order_rate_constant {init: 0.014043, pub: out};
    var hgdl4_FC_k_f21: second_order_rate_constant {init: 1.6521e-5, pub: out};
    var hgdl4_FC_k_r21: first_order_rate_constant {init: 0.0517365, pub: out};
    // Activation HLA-E
    var hE_activating_cd94_k_f8: second_order_rate_constant {init: 1.84965e-5, pub: out};
    var hE_activating_cd94_k_r8: first_order_rate_constant {init: 1.8, pub: out};
    var hE_activating_cd94_k_f9: second_order_rate_constant {init: 0.0178629, pub: out};
    var hE_activating_cd94_k_r9: first_order_rate_constant {init: 1.45902, pub: out};
    var hE_activating_cd94_k_f10: second_order_rate_constant {init: 1.95e-6, pub: out};
    var hE_activating_cd94_k_r10: first_order_rate_constant {init: 11.6167, pub: out};
    var hE_activating_cd94_k_f11: first_order_rate_constant {init: 0.002, pub: out};
    // Activation HLA-C
    var hC_activating_kir2ds1_k_f1: second_order_rate_constant {init: 1.84965e-5, pub: out};
    var hC_activating_kir2ds1_k_r1: first_order_rate_constant {init: 0.123663, pub: out};
    var hC_activating_kir2ds1_k_f2: second_order_rate_constant {init: 0.0178629, pub: out};
    var hC_activating_kir2ds1_k_r2: first_order_rate_constant {init: 1.45902, pub: out};
    var hC_activating_kir2ds1_k_f3: second_order_rate_constant {init: 1.95e-6, pub: out};
    var hC_activating_kir2ds1_k_r3: first_order_rate_constant {init: 11.6167, pub: out};
    var hC_activating_kir2ds1_k_f4: first_order_rate_constant {init: 0.002, pub: out};
    // Inhibition HLA-C
    var hC_activating_kir2dl_k_f1: second_order_rate_constant {init: 2.1e8, pub: out};
    var hC_activating_kir2dl_k_r1: first_order_rate_constant {init: 1.9e11, pub: out};
    var hC_activating_kir2dl_k_f2: second_order_rate_constant {init: 0.0472605, pub: out};
    var hC_activating_kir2dl_k_r2: first_order_rate_constant {init: 5.935, pub: out};
    var hC_activating_kir2dl_k_f3: first_order_rate_constant {init: 0.00023, pub: out};
    var hC_activating_kir2dl_k_f4: second_order_rate_constant {init: 3.04e-5, pub: out};
    var hC_activating_kir2dl_k_r4: first_order_rate_constant {init: 0.04682, pub: out};
    var hC_activating_kir2dl_k_f5: first_order_rate_constant {init: 1.33, pub: out};
    var hC_activating_kir2dl_k_f6: first_order_rate_constant {init: 110, pub: out};
    var hC_activating_kir2dl_k_r6: second_order_rate_constant {init: 0.0006, pub: out};
    var hC_activating_kir2dl_k_f7: first_order_rate_constant {init: 34.0776, pub: out};
    // Inhibition HLA-G
    var hG_activating_kir2dl4_k_f11: second_order_rate_constant {init: 0.00019, pub: out};
    var hG_activating_kir2dl4_k_r11: first_order_rate_constant {init: 1.1, pub: out};
    var hG_activating_kir2dl4_k_f12: second_order_rate_constant {init: 0.0472605, pub: out};
    var hG_activating_kir2dl4_k_r12: first_order_rate_constant {init: 0.005935, pub: out};
    var hG_activating_kir2dl4_k_f13: first_order_rate_constant {init: 0.00023, pub: out};
    var hG_activating_kir2dl4_k_f14: second_order_rate_constant {init: 3.04e-5, pub: out};
    var hG_activating_kir2dl4_k_r14: first_order_rate_constant {init: 0.04682, pub: out};
    var hG_activating_kir2dl4_k_f15: first_order_rate_constant {init: 1.33, pub: out};
    var hG_activating_kir2dl4_k_f16: first_order_rate_constant {init: 110, pub: out};
    var hG_activating_kir2dl4_k_r16: second_order_rate_constant {init: 0.0006, pub: out};
    var hG_activating_kir2dl4_k_f17: first_order_rate_constant {init: 0.0340776, pub: out};
    // Inhibition HLA-G
    var hG_activating_lilrb_k_f21: second_order_rate_constant {init: 6.7e-6, pub: out};
    var hG_activating_lilrb_k_r21: first_order_rate_constant {init: 0.11, pub: out};
    var hG_activating_lilrb_k_f22: second_order_rate_constant {init: 0.0472605, pub: out};
    var hG_activating_lilrb_k_r22: first_order_rate_constant {init: 0.005935, pub: out};
    var hG_activating_lilrb_k_f23: first_order_rate_constant {init: 0.00023, pub: out};
    var hG_activating_lilrb_k_f24: second_order_rate_constant {init: 3.04e-5, pub: out};
    var hG_activating_lilrb_k_r24: first_order_rate_constant {init: 0.04682, pub: out};
    var hG_activating_lilrb_k_f25: first_order_rate_constant {init: 1.33, pub: out};
    var hG_activating_lilrb_k_f26: second_order_rate_constant {init: 6.4e-5, pub: out};
    var hG_activating_lilrb_k_r26: first_order_rate_constant {init: 0.0067, pub: out};
    var hG_activating_lilrb_k_f27: first_order_rate_constant {init: 0.0340776, pub: out};
    // Inhibition HLA-A
    var hA_activating_kir3dl1_k_f31: second_order_rate_constant {init: 0.00019, pub: out};
    var hA_activating_kir3dl1_k_r31: first_order_rate_constant {init: 1.1, pub: out};
    var hA_activating_kir3dl1_k_f32: second_order_rate_constant {init: 0.0472605, pub: out};
    var hA_activating_kir3dl1_k_r32: first_order_rate_constant {init: 0.005935, pub: out};
    var hA_activating_kir3dl1_k_f33: first_order_rate_constant {init: 0.00023, pub: out};
    var hA_activating_kir3dl1_k_f34: second_order_rate_constant {init: 3.04e-5, pub: out};
    var hA_activating_kir3dl1_k_r34: first_order_rate_constant {init: 0.04682, pub: out};
    var hA_activating_kir3dl1_k_f35: first_order_rate_constant {init: 1.33, pub: out};
    var hA_activating_kir3dl1_k_f36: first_order_rate_constant {init: 110, pub: out};
    var hA_activating_kir3dl1_k_r36: second_order_rate_constant {init: 0.0006, pub: out};
    var hA_activating_kir3dl1_k_f37: first_order_rate_constant {init: 0.0340776, pub: out};
    // Inhibition HLA-B
    var hB_activating_kir3dl2_k_f41: second_order_rate_constant {init: 0.00019, pub: out};
    var hB_activating_kir3dl2_k_r41: first_order_rate_constant {init: 1.1, pub: out};
    var hB_activating_kir3dl2_k_f42: second_order_rate_constant {init: 0.0001, pub: out};
    var hB_activating_kir3dl2_k_r42: first_order_rate_constant {init: 0.005935, pub: out};
    var hB_activating_kir3dl2_k_f43: first_order_rate_constant {init: 0.00023, pub: out};
    var hB_activating_kir3dl2_k_f44: second_order_rate_constant {init: 0.0001, pub: out};
    var hB_activating_kir3dl2_k_r44: first_order_rate_constant {init: 0.04682, pub: out};
    var hB_activating_kir3dl2_k_f45: first_order_rate_constant {init: 1.33, pub: out};
    var hB_activating_kir3dl2_k_f46: first_order_rate_constant {init: 110, pub: out};
    var hB_activating_kir3dl2_k_r46: second_order_rate_constant {init: 0.0006, pub: out};
    var hB_activating_kir3dl2_k_f47: first_order_rate_constant {init: 0.0340776, pub: out};
    // Cytokine secretion
    var k_f100: first_order_rate_constant {init: 0.0147, pub: out};
    var k_f101: first_order_rate_constant {init: 9e-5, pub: out};
    var k_f102: first_order_rate_constant {init: 0.0035, pub: out};
  enddef;

  def comp fixed_parameters as
    var NFATcyc_k_f1: second_order_rate_constant {init: 5.1e-5, pub: out};
    var NFATcyc_k_r1: first_order_rate_constant {init: 2.0772, pub: out};
    var NFATcyc_k_f2: first_order_rate_constant {init: 0.00297, pub: out};
    var NFATcyc_k_f3: first_order_rate_constant {init: 0.00215, pub: out};
    var NFATcyc_k_r3: second_order_rate_constant {init: 0.0003345, pub: out};
    var NFATcyc_k_f4: first_order_rate_constant {init: 0.984, pub: out};
    var Ccn: dimensionless {init: 50, pub: out};
    var M: nM {init: 6000, pub: out};
    var Ntot: nM {init: 1000, pub: out};
    var K_mN: nM {init: 535, pub: out};
    var n: dimensionless {init: 2.92, pub: out};
    var K_dN: nM {init: 1760, pub: out};
    // Dupont 1997
    var V_k: flux {init: 0, pub: out};
    var K_k: nM {init: 1000, pub: out};
    var K_d: nM {init: 300, pub: out};
    var n_d: dimensionless {init: 2, pub: out};
    var V_p1: flux {init: 5000, pub: out};
    var K_p1: nM {init: 10000, pub: out};
    var V_p2: flux {init: 200, pub: out};
    var K_p2: nM {init: 2000, pub: out};
    var k: first_order_rate_constant {init: 0, pub: out};
    var gamma: dimensionless {init: 1, pub: out};
    var alpha: dimensionless {init: 0.1, pub: out};
    var Ca_tot: nM {init: 80000, pub: out};
    var V_MP: flux {init: 4000, pub: out};
    var K_p: nM {init: 350, pub: out};
    var n_p: dimensionless {init: 2, pub: out};
    var K_act: nM {init: 560, pub: out};
    var K_inh: nM {init: 150, pub: out};
    var K_minus: first_order_rate_constant {init: 0.5, pub: out};
    var b: dimensionless {init: 0.0007, pub: out};
    var K_1: first_order_rate_constant {init: 2.57, pub: out};
    var K_IP: nM {init: 1000, pub: out};
    // FCepsilon
    var FCepsilonRI_k_f1: second_order_rate_constant {init: 0.000618038, pub: out};
    var FCepsilonRI_k_r1: first_order_rate_constant {init: 0.00148883, pub: out};
    var FCepsilonRI_k_f2: first_order_rate_constant {init: 0.00817889, pub: out};
    var FCepsilonRI_k_f3: second_order_rate_constant {init: 0.0010887, pub: out};
    var FCepsilonRI_k_f4: second_order_rate_constant {init: 0.0105797, pub: out};
    var FCepsilonRI_k_r4: first_order_rate_constant {init: 0.13486, pub: out};
    var FCepsilonRI_k_f5: first_order_rate_constant {init: 0.804035, pub: out};
    var FCepsilonRI_k_f6: second_order_rate_constant {init: 0.000414288, pub: out};
    var FCepsilonRI_k_r6: first_order_rate_constant {init: 0.731255, pub: out};
    var FCepsilonRI_k_f7: first_order_rate_constant {init: 11.4185, pub: out};
    // MAPK to TNF
    var Zap70_k_f1: second_order_rate_constant {init: 1.95e-6, pub: out};
    var Zap70_k_r1: second_order_rate_constant {init: 0.0116167, pub: out};
    var Zap70_k_f2: second_order_rate_constant {init: 0.0076167, pub: out};
    var Zap70_k_r2: first_order_rate_constant {init: 0.0007, pub: out};
    var Zap70_k_f3: second_order_rate_constant {init: 9.5e-8, pub: out};
    var Zap70_k_r3: second_order_rate_constant {init: 6e-7, pub: out};
    var Zap70_k_f4: first_order_rate_constant {init: 0.0007, pub: out};
    var Zap70_k_r4: second_order_rate_constant {init: 0.0076167, pub: out};
    var Zap70_k_f5: first_order_rate_constant {init: 0.002, pub: out};
    var PI3k_kf1: second_order_rate_constant {init: 0.0012, pub: out};
    var PI3k_kb1: first_order_rate_constant {init: 0.00076, pub: out};
    var PI3k_kf2: second_order_rate_constant {init: 0.01, pub: out};
    var PI3k_kb2: first_order_rate_constant {init: 0.1, pub: out};
    var PI3k_kf3: first_order_rate_constant {init: 1, pub: out};
    var PI3k_kb3: first_order_rate_constant {init: 0.01, pub: out};
    var PI3k_kf34: first_order_rate_constant {init: 0.001, pub: out};
    var PI3k_kb34: first_order_rate_constant {init: 0, pub: out};
    var PI3k_V4: flux {init: 62.5, pub: out};
    var PI3k_k4: nM {init: 50, pub: out};
    var PI3k_kf5: second_order_rate_constant {init: 0.1, pub: out};
    var PI3k_kb5: first_order_rate_constant {init: 1, pub: out};
    var PI3k_kf6: first_order_rate_constant {init: 20, pub: out};
    var PI3k_kb6: first_order_rate_constant {init: 5, pub: out};
    var PI3k_kf7: second_order_rate_constant {init: 60, pub: out};
    var PI3k_kb7: first_order_rate_constant {init: 546, pub: out};
    var PI3k_kf8: first_order_rate_constant {init: 2040, pub: out};
    var PI3k_kb8: second_order_rate_constant {init: 15700, pub: out};
    var PI3k_kf9: first_order_rate_constant {init: 40.8, pub: out};
    var PI3k_kb9: second_order_rate_constant {init: 0, pub: out};
    var PI3k_V10: flux {init: 0.0154, pub: out};
    var PI3k_k10: nM {init: 340, pub: out};
    var PI3k_kf23: second_order_rate_constant {init: 0.1, pub: out};
    var PI3k_kb23: first_order_rate_constant {init: 2, pub: out};
    var PI3k_kf24: first_order_rate_constant {init: 9.85, pub: out};
    var PI3k_kb24: first_order_rate_constant {init: 0.0985, pub: out};
    var PI3k_kf25: first_order_rate_constant {init: 45.8, pub: out};
    var PI3k_kb25: second_order_rate_constant {init: 0.047, pub: out};
    var PI3k_V26: flux {init: 2620, pub: out};
    var PI3k_k26: nM {init: 3680, pub: out};
    var Akt_kf27: first_order_rate_constant {init: 16.9, pub: out};
    var Akt_k27: nM {init: 39.1, pub: out};
    var Akt_V28: flux {init: 17000, pub: out};
    var Akt_k28: nM {init: 9.02, pub: out};
    var Akt_kf29: second_order_rate_constant {init: 507, pub: out};
    var Akt_kb29: first_order_rate_constant {init: 234, pub: out};
    var Akt_V30: flux {init: 20000, pub: out};
    var Akt_k30: nM {init: 80000, pub: out};
    var Akt_kf31: first_order_rate_constant {init: 0.107, pub: out};
    var Akt_k31: nM {init: 4.35, pub: out};
    var Akt_V32: flux {init: 20000, pub: out};
    var Akt_k32: nM {init: 80000, pub: out};
    var Akt_kf33: first_order_rate_constant {init: 0.211, pub: out};
    var Akt_k33: nM {init: 12, pub: out};
    var Akt_k16: nM {init: 2200, pub: out};
    var Akt_k18: nM {init: 60, pub: out};
    var ERK_MKP3: nM {init: 2.4, pub: out};
    var ERK_kf19: first_order_rate_constant {init: 9.5, pub: out};
    var ERK_k19: nM {init: 146000, pub: out};
    var ERK_kf20: first_order_rate_constant {init: 0.3, pub: out};
    var ERK_k20: nM {init: 160, pub: out};
    var ERK_kf21: first_order_rate_constant {init: 16, pub: out};
    var ERK_k21: nM {init: 146000, pub: out};
    var ERK_kf22: first_order_rate_constant {init: 0.27, pub: out};
    var ERK_k22: nM {init: 60, pub: out};
    var MEK_kf15: first_order_rate_constant {init: 3.5, pub: out};
    var MEK_k15: nM {init: 317, pub: out};
    var MEK_kf16: first_order_rate_constant {init: 0.058, pub: out};
    var MEK_k16: nM {init: 2200, pub: out};
    var MEK_kf17: first_order_rate_constant {init: 2.9, pub: out};
    var MEK_k17: nM {init: 317, pub: out};
    var MEK_kf18: first_order_rate_constant {init: 0.058, pub: out};
    var MEK_k18: nM {init: 60, pub: out};
    var MEK_k31: nM {init: 4.35, pub: out};
    var MEK_k33: nM {init: 12, pub: out};
    var Raf_kf13: first_order_rate_constant {init: 1.53, pub: out};
    var Raf_k13: nM {init: 11.7, pub: out};
    var Raf_kf14: first_order_rate_constant {init: 0.00673, pub: out};
    var Raf_k14: nM {init: 8.07, pub: out};
    var RasGDPtoRasGTP_kf11: first_order_rate_constant {init: 0.222, pub: out};
    var RasGDPtoRasGTP_k11: nM {init: 0.181, pub: out};
    var RasGDPtoRasGTP_V12: flux {init: 0.289, pub: out};
    var RasGDPtoRasGTP_k12: nM {init: 0.0571, pub: out};
    var PP2A: nM {init: 11.4, pub: out};
    var Raf_E: nM {init: 7, pub: out};
    var tcr_k_f21: second_order_rate_constant {init: 1.84965e-5, pub: out};
    var tcr_k_r21: first_order_rate_constant {init: 0.123663, pub: out};
    var plc_k_f23: second_order_rate_constant {init: 0.000698868, pub: out};
    var plc_k_r23: first_order_rate_constant {init: 2.81652, pub: out};
    var plc_k_f24: first_order_rate_constant {init: 0.084386, pub: out};
    var plc_k_f25: second_order_rate_constant {init: 0.000153003, pub: out};
    var plc_k_r25: first_order_rate_constant {init: 0.00151198, pub: out};
    var shc_k_f26: second_order_rate_constant {init: 7.04912e-5, pub: out};
    var shc_k_r26: first_order_rate_constant {init: 0.00304537, pub: out};
    var lat_k_f27: second_order_rate_constant {init: 9.98406e-5, pub: out};
    var lat_k_r27: first_order_rate_constant {init: 1.38674, pub: out};
    var lat_k_f28: first_order_rate_constant {init: 0.307731, pub: out};
    var lat_k_f29: second_order_rate_constant {init: 0.000896374, pub: out};
    var lat_k_r29: first_order_rate_constant {init: 43.822, pub: out};
    var ERKPP_k_f30: first_order_rate_constant {init: 0.00261975, pub: out};
    var ERKPP_k_f31: first_order_rate_constant {init: 6.53271e-5, pub: out};
    var ERKPP_k_f32: first_order_rate_constant {init: 1.31083e-5, pub: out};
    // ITG
    var ITG_k_f1: second_order_rate_constant {init: 1.84965e-5, pub: out};
    var ITG_k_r1: first_order_rate_constant {init: 0.123663, pub: out};
  enddef;

  def comp variables as
    // activation receptors
    var nkg2c: nM {init: 8, pub: out};
    var d12: nM {init: 600, pub: out};
    var hE: nM {init: 516, pub: out};
    var hEpd12: nM {init: 0, pub: out};
    var hEd12plck: nM {init: 0, pub: out};
    var hEpd12cd45: nM {init: 0, pub: out};
    var kir2ds1: nM {init: 8, pub: out};
    var hC: nM {init: 0.16, pub: out};
    var hC_plck: nM {init: 2006.15, pub: out};
    var hCpd12: nM {init: 0, pub: out};
    var hCpd12cd45: nM {init: 0, pub: out};
    // inhibition receptors
    var kir2dl: nM {init: 1000, pub: out};
    var inhibition_shp: nM {init: 1000000, pub: out};
    var inhibition_plck: nM {init: 1000, pub: out};
    var cd45: nM {init: 1000, pub: out};
    var pshp_kir2dl: nM {init: 0, pub: out};
    var inhibition_kir2dl4: nM {init: 17960, pub: out};
    var pshp_dl4: nM {init: 0, pub: out};
    var lilrb: nM {init: 17956, pub: out};
    var pshp_lil: nM {init: 0, pub: out};
    var hA: nM {init: 10.52, pub: out};
    var kir3dl1: nM {init: 17950, pub: out};
    var pshp_dl1: nM {init: 0, pub: out};
    var hB: nM {init: 10.56, pub: out};
    var kir3dl2: nM {init: 17960, pub: out};
    var pshp_dl2: nM {init: 0, pub: out};
    // Cooling 2009
    var stimEnd: s {init: 1800, pub: out};
    // cytokine
    var NFATN_c: nM {init: 00, pub: out};
    var NFATN_n: nM {init: 0, pub: out};
    var NFATp_c: nM {init: 455.78, pub: out};
    var NFATp_n: nM {init: 0, pub: out};
    var NFAT_IFN_c: nM {init: 0, pub: out};
    var NFAT_TNF_c: nM {init: 0, pub: out};
    var NFAT_GSMCSF_c: nM {init: 0, pub: out};
    var ERKPP_IFN_c: nM {init: 0, pub: out};
    var ERKPP_GMCSF_c: nM {init: 0, pub: out};
    var IFN_released: nM {init: 0, pub: out};
    var TNF_released: nM {init: 0, pub: out};
    var GMCSF_released: nM {init: 0, pub: out};
    var nuclearNFATpercent: dimensionless {pub: out};
    var nuclearNFAT: nM {pub: out};
    var NFATN_c_percent: dimensionless {pub: out};
    var act_N: dimensionless {pub: out};
    // Dupont 1997
    var R_des: nM {init: 100, pub: out};
    var Ca_cyto: nM {init: 100, pub: out};
    var IP3: nM {init: 100, pub: out};
    var IP4: nM {init: 100, pub: out};
    var I_ra: nM {pub: out};
    var I_rable: nM {pub: out};
    // HLA-G to cytokine
    var PI3K: nM {init: 10, pub: out};
    var PI3Kstar: nM {init: 0, pub: out};
    var pGrb2PI3K: nM {init: 0, pub: out};
    var pGrb2: nM {init: 0, pub: out};
    var Lyn: nM {init: 0, pub: out};
    var pFC: nM {init: 0, pub: out};
    var Syk: nM {init: 5, pub: out};
    var pSyk: nM {init: 0, pub: out};
    var pFCLyn: nM {init: 0, pub: out};
    var pFCSyk: nM {init: 0, pub: out};
    var pSykGrb2: nM {init: 0, pub: out};
    var Pi: nM {init: 402.7, pub: out};
    var Grb2: nM {init: 6470, pub: out};
    var pLyn: nM {init: 6500, pub: out};
    var hGdl4FC: nM {init: 0, pub: out};
    var FC: nM {init: 1000, pub: out};
    var dl4: nM {init: 98, pub: out};
    var hGdl4: nM {init: 0, pub: out};
    var hG: nM {init: 105.2, pub: out};
    var V_plc: flux {init: 1300, pub: out};
    var Ca: nM {init: 0, pub: out};
    // MAPK to TNF
    var MEKPP: nM {init: 0, pub: out};
    var MEKP: nM {init: 0, pub: out};
    var MEK: nM {init: 119, pub: out};
    var P: nM {init: 895, pub: out};
    var PIP3: nM {init: 0, pub: out};
    var Akt: nM {init: 8.68, pub: out};
    var Akt_PIP3: nM {init: 0, pub: out};
    var Akt_PIP: nM {init: 0, pub: out};
    var Akt_PIPP: nM {init: 0, pub: out};
    var ERK: nM {init: 1010, pub: out};
    var ERKP: nM {init: 0, pub: out};
    var ERKPP: nM {init: 0, pub: out};
    var R: nM {init: 79.6, pub: out};
    var HRG: nM {init: 330, pub: out};
    var R_HRG: nM {init: 0, pub: out};
    var R_HRG2: nM {init: 0, pub: out};
    var RP: nM {init: 0, pub: out};
    var Internalisation: nM {init: 0, pub: out};
    var R_Shc: nM {init: 0, pub: out};
    var Shc: nM {init: 1060, pub: out};
    var R_ShP: nM {init: 0, pub: out};
    var GS: nM {init: 10.50, pub: out};
    var ShP: nM {init: 0, pub: out};
    var R_ShGS: nM {init: 0, pub: out};
    var ShGS: nM {init: 0, pub: out};
    var R_PI3K: nM {init: 0, pub: out};
    var PI3K_hatakeyama: nM {init: 8.16, pub: out};
    var R_PI3Kstar: nM {init: 0, pub: out};
    var PI3Kstar_hatakeyama: nM {init: 0, pub: out};
    var RasGTP: nM {init: 0, pub: out};
    var RasGDP: nM {init: 120, pub: out};
    var RAF: nM {init: 96.1, pub: out};
    var RAFstar: nM {init: 0, pub: out};
    var plck: nM {init: 10006.15, pub: out};
    var lck: nM {init: 0, pub: out};
    var zap70: nM {init: 1000, pub: out};
    var tpa: nM {init: 516, pub: out};
    var tcr: nM {init: 8, pub: out};
    var plc: nM {init: 1000, pub: out};
    var lat: nM {init: 1000, pub: out};
    var ERKPP_TNF_c: nM {init: 0, pub: out};
    var plat: nM {init: 0, pub: out};
    var pplc: nM {init: 0, pub: out};
    // vav
    var vav: nM {init: 190, pub: out};
    var pshp_cd94: nM {init: 0, pub: out};
    // pZAP70
    var pzap70: nM {init: 0, pub: out};
    // ITG
    var icam: nM {init: 516, pub: out};
    var itg: nM {init: 8, pub: out};
    var icamitg: nM {init: 0, pub: out};
    // cytokine
    var IFN_c: nM {init: 0, pub: out};
    var TNF_c: nM {init: 0, pub: out};
    var GMCSF_c: nM {init: 0, pub: out};
    // RacPAK
    var PAKa: nM {init: 0, pub: out};
    // mapping
    var pLck: nM {init: 2000, pub: out};
    var RacGDP: nM {init: 4000, pub: out};
  enddef;

  def comp NFATcyc_interface as
    var nuclearNFATpercent: dimensionless {pub: in};
    var nuclearNFAT: nM {pub: in};
    var NFATN_c_percent: dimensionless {pub: in};
    var NFATN_n: nM {pub: in};
    var NFATp_n: nM {pub: in};
    var NFATN_c: nM {pub: in};
    var NFATp_c: nM {pub: in};
    var Ccn: dimensionless {pub: in};
    nuclearNFAT = NFATN_n+NFATp_n;
    nuclearNFATpercent = (NFATN_n+NFATp_n)/(NFATN_n+NFATp_n+Ccn*(NFATN_c+NFATp_c))*100{dimensionless};
    NFATN_c_percent = NFATN_c*Ccn/(NFATN_n+NFATp_n+Ccn*(NFATN_c+NFATp_c))*100{dimensionless};
  enddef;

  def group as encapsulation for
    comp geometry incl
      // receptors
      comp hE_activating_cd94;
      comp hC_activating_kir2ds1;
      comp calcineurin;
      comp NFAT_Cycling;
      comp NFATcyc_interface;
      comp nuclearNFAT;
      comp NFAT_to_IFN;
      comp NFAT_to_TNF;
      comp NFAT_to_GSMCSF;
      comp ERKPP_to_IFN;
      comp ERKPP_to_GMCSF;
      comp IFN_release;
      comp TNF_release;
      comp GSMCSF_release;
      comp intracellular_NFAT_to_IFN;
      comp intracellular_NFAT_to_TNF;
      comp intracellular_NFAT_to_GSMCSF;
      comp intracellular_ERKPP_to_IFN;
      comp intracellular_ERKPP_to_GMCSF;
      comp IFN_c;
      comp TNF_c;
      comp GMCSF_c;
      // Cooling 2009
      comp calcium;
      // Dupont 1997
      comp R_des;
      comp C_cyto;
      comp I_ra;
      comp I_rable;
      comp IP3;
      comp V_PLC;
      comp V_3K;
      comp V_5P;
      // receptor to PI3K
      comp FCepsilonRI;
      comp PI3K;
      comp hG_activating_dl4;
      comp hgdl4_FC;
      // Vav
      comp vav_activation;
      comp vav_inhibition;
      // Rac_PAK
      comp RacPAK;
      // MAPK to TNF
      comp Akt;
      comp ERK;
      comp MEK;
      comp RAF;
      comp PI3K_hatakeyama;
      comp RasGDPtoRasGTP;
      comp zap70;
      comp tcr;
      comp pzap70;
      comp plc;
      comp shc;
      comp lat;
      comp ERKPPtranslocation;
      comp ERKPP_TNF;
      // ITG
      comp icam_activating_itg;
      // inhibitors
      comp kir2dl;
      comp hG_activating_kir2dl4;
      comp hG_activating_lilrb;
      comp hA_activating_kir3dl1;
      comp hB_activating_kir3dl2;
      comp shp;
      // mapping
      comp hC_mapk;
      comp hE_mapk;
      comp icam_mapk;
      comp mapk_vav;
      comp pvav_RacPAK;
      comp dupont_NFAT;
      comp pi3k_vav;
      comp PAK_MEK;
      comp dephospho_pzap_bySHP;
      comp dephospho_pplc_bySHP;
      comp lat_plc;
    endcomp;
  enddef;

  def comp geometry as
    var time: s {priv: out, pub: in};
    // ****************
    // 'Free' parameters
    // ****************
    // receptors activation
    var nkg2c: nM {priv: out, pub: in};
    var NFAT2cyt_k_f1: first_order_rate_constant {priv: out, pub: in};
    var NFAT2cyt_k_f2: first_order_rate_constant {priv: out, pub: in};
    var NFAT2cyt_k_f3: first_order_rate_constant {priv: out, pub: in};
    var ERKPP2cyt_k_f41: first_order_rate_constant {priv: out, pub: in};
    var ERKPP2cyt_k_f43: first_order_rate_constant {priv: out, pub: in};
    var CytRel_k_f4: first_order_rate_constant {priv: out, pub: in};
    var CytRel_k_f5: first_order_rate_constant {priv: out, pub: in};
    var CytRel_k_f6: first_order_rate_constant {priv: out, pub: in};
    var CytRel_k_f42: first_order_rate_constant {priv: out, pub: in};
    var CytRel_k_f44: first_order_rate_constant {priv: out, pub: in};
    var PI3K_k_f2: second_order_rate_constant {priv: out, pub: in};
    var PI3K_k_r2: first_order_rate_constant {priv: out, pub: in};
    var PI3K_k_f3: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_dl4_k_f10: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_dl4_k_r10: first_order_rate_constant {priv: out, pub: in};
    var hgdl4_FC_k_f21: second_order_rate_constant {priv: out, pub: in};
    var hgdl4_FC_k_r21: first_order_rate_constant {priv: out, pub: in};
    var hE_activating_cd94_k_f8: second_order_rate_constant {priv: out, pub: in};
    var hE_activating_cd94_k_r8: first_order_rate_constant {priv: out, pub: in};
    var hE_activating_cd94_k_f9: second_order_rate_constant {priv: out, pub: in};
    var hE_activating_cd94_k_r9: first_order_rate_constant {priv: out, pub: in};
    var hE_activating_cd94_k_f10: second_order_rate_constant {priv: out, pub: in};
    var hE_activating_cd94_k_r10: first_order_rate_constant {priv: out, pub: in};
    var hE_activating_cd94_k_f11: first_order_rate_constant {priv: out, pub: in};
    var hEpd12: nM {priv: out, pub: in};
    var hEd12plck: nM {priv: out, pub: in};
    var hEpd12cd45: nM {priv: out, pub: in};
    var hC_activating_kir2ds1_k_f1: second_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2ds1_k_r1: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2ds1_k_f2: second_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2ds1_k_r2: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2ds1_k_f3: second_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2ds1_k_r3: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2ds1_k_f4: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_f1: second_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_r1: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_f2: second_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_r2: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_f3: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_f4: second_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_r4: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_f5: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_f6: first_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_r6: second_order_rate_constant {priv: out, pub: in};
    var hC_activating_kir2dl_k_f7: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_f11: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_r11: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_f12: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_r12: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_f13: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_f14: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_r14: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_f15: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_f16: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_r16: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_kir2dl4_k_f17: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_f21: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_r21: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_f22: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_r22: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_f23: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_f24: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_r24: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_f25: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_f26: second_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_r26: first_order_rate_constant {priv: out, pub: in};
    var hG_activating_lilrb_k_f27: first_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_f31: second_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_r31: first_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_f32: second_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_r32: first_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_f33: first_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_f34: second_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_r34: first_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_f35: first_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_f36: first_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_r36: second_order_rate_constant {priv: out, pub: in};
    var hA_activating_kir3dl1_k_f37: first_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_f41: second_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_r41: first_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_f42: second_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_r42: first_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_f43: first_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_f44: second_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_r44: first_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_f45: first_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_f46: first_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_r46: second_order_rate_constant {priv: out, pub: in};
    var hB_activating_kir3dl2_k_f47: first_order_rate_constant {priv: out, pub: in};
    var k_f100: first_order_rate_constant {priv: out, pub: in};
    var k_f101: first_order_rate_constant {priv: out, pub: in};
    var k_f102: first_order_rate_constant {priv: out, pub: in};
    // ****************
    // Fixed parameters
    // ****************
    var NFATcyc_k_f1: second_order_rate_constant {priv: out, pub: in};
    var NFATcyc_k_r1: first_order_rate_constant {priv: out, pub: in};
    var NFATcyc_k_f2: first_order_rate_constant {priv: out, pub: in};
    var NFATcyc_k_f3: first_order_rate_constant {priv: out, pub: in};
    var NFATcyc_k_r3: second_order_rate_constant {priv: out, pub: in};
    var NFATcyc_k_f4: first_order_rate_constant {priv: out, pub: in};
    var Ccn: dimensionless {priv: out, pub: in};
    var M: nM {priv: out, pub: in};
    var Ntot: nM {priv: out, pub: in};
    var K_mN: nM {priv: out, pub: in};
    var n: dimensionless {priv: out, pub: in};
    var K_dN: nM {priv: out, pub: in};
    // Dupont 1997
    var V_k: flux {priv: out, pub: in};
    var K_k: nM {priv: out, pub: in};
    var K_d: nM {priv: out, pub: in};
    var n_d: dimensionless {priv: out, pub: in};
    var V_p1: flux {priv: out, pub: in};
    var K_p1: nM {priv: out, pub: in};
    var V_p2: flux {priv: out, pub: in};
    var K_p2: nM {priv: out, pub: in};
    var k: first_order_rate_constant {priv: out, pub: in};
    var gamma: dimensionless {priv: out, pub: in};
    var alpha: dimensionless {priv: out, pub: in};
    var Ca_tot: nM {priv: out, pub: in};
    var V_MP: flux {priv: out, pub: in};
    var K_p: nM {priv: out, pub: in};
    var n_p: dimensionless {priv: out, pub: in};
    var K_act: nM {priv: out, pub: in};
    var K_inh: nM {priv: out, pub: in};
    var n_a: dimensionless {init: 3, priv: out, pub: out};
    var n_i: dimensionless {init: 4, priv: out, pub: out};
    var K_minus: first_order_rate_constant {priv: out, pub: in};
    var K_plus: fifth_order_rate_constant {priv: out, pub: out};
    var b: dimensionless {priv: out, pub: in};
    var K_1: first_order_rate_constant {priv: out, pub: in};
    var K_IP: nM {priv: out, pub: in};
    // FCepsilon
    var FCepsilonRI_k_f1: second_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_r1: first_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_f2: first_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_f3: second_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_f4: second_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_r4: first_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_f5: first_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_f6: second_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_r6: first_order_rate_constant {priv: out, pub: in};
    var FCepsilonRI_k_f7: first_order_rate_constant {priv: out, pub: in};
    // Vav
    var vav_k_f1: second_order_rate_constant {priv: in};
    var vav_k_r1: first_order_rate_constant {priv: in};
    var vav_k_f2: second_order_rate_constant {priv: in};
    var vav_k_r2: first_order_rate_constant {priv: in};
    var vav_k_f3: first_order_rate_constant {priv: in};
    var vav_k_r3: first_order_rate_constant {priv: in};
    var vav_k_f4: first_order_rate_constant {priv: in};
    var vav_k_f5: second_order_rate_constant {priv: in};
    var vav_k_r5: first_order_rate_constant {priv: in};
    var vav_k_f6: first_order_rate_constant {priv: in};
    var vav_k_f7: second_order_rate_constant {priv: in};
    var vav_k_r7: first_order_rate_constant {priv: in};
    var vav_k_f8: first_order_rate_constant {priv: in};
    var vav_k_f11: second_order_rate_constant {priv: in};
    var vav_k_r11: first_order_rate_constant {priv: in};
    var vav_k_f12: second_order_rate_constant {priv: in};
    var vav_k_r12: flux {priv: in};
    var vav_k_f13: first_order_rate_constant {priv: in};
    var vav_k_f14: second_order_rate_constant {priv: in};
    var vav_k_r14: first_order_rate_constant {priv: in};
    var vav_k_f15: first_order_rate_constant {priv: in};
    var vav_k_f16: second_order_rate_constant {priv: in};
    var vav_k_r16: first_order_rate_constant {priv: in};
    var vav_k_f17: first_order_rate_constant {priv: in};
    var vav_k_f19: first_order_rate_constant {priv: in};
    // *********
    // Variables
    // *********
    // activation receptor
    var d12: nM {priv: out, pub: in};
    var hE: nM {priv: out, pub: in};
    var kir2ds1: nM {priv: out, pub: in};
    var hC: nM {priv: out, pub: in};
    var hC_plck: nM {priv: out, pub: in};
    var hCpd12: nM {priv: out, pub: in};
    var hCpd12cd45: nM {priv: out, pub: in};
    // inhibition receptors
    var kir2dl: nM {priv: out, pub: in};
    var inhibition_shp: nM {priv: out, pub: in};
    var inhibition_plck: nM {priv: out, pub: in};
    var cd45: nM {priv: out, pub: in};
    var pshp_kir2dl: nM {priv: out, pub: in};
    var inhibition_kir2dl4: nM {priv: out, pub: in};
    var pshp_dl4: nM {priv: out, pub: in};
    var lilrb: nM {priv: out, pub: in};
    var pshp_lil: nM {priv: out, pub: in};
    var hA: nM {priv: out, pub: in};
    var kir3dl1: nM {priv: out, pub: in};
    var pshp_dl1: nM {priv: out, pub: in};
    var hB: nM {priv: out, pub: in};
    var kir3dl2: nM {priv: out, pub: in};
    var pshp_dl2: nM {priv: out, pub: in};
    // cytokines
    var NFATN_c: nM {priv: out, pub: in};
    var NFATN_n: nM {priv: out, pub: in};
    var NFATp_c: nM {priv: out, pub: in};
    var NFATp_n: nM {priv: out, pub: in};
    var nuclearNFATpercent: dimensionless {priv: out, pub: in};
    var nuclearNFAT: nM {priv: out, pub: in};
    var NFATN_c_percent: dimensionless {priv: out, pub: in};
    var act_N: dimensionless {priv: out, pub: in};
    var NFAT_IFN_c: nM {priv: out, pub: in};
    var NFAT_TNF_c: nM {priv: out, pub: in};
    var NFAT_GSMCSF_c: nM {priv: out, pub: in};
    var ERKPP_IFN_c: nM {priv: out, pub: in};
    var ERKPP_GMCSF_c: nM {priv: out, pub: in};
    var IFN_released: nM {priv: out, pub: in};
    var TNF_released: nM {priv: out, pub: in};
    var GMCSF_released: nM {priv: out, pub: in};
    // Dupont 1997
    var R_des: nM {priv: out, pub: in};
    var Ca_cyto: nM {priv: out, pub: in};
    var I_ra: nM {priv: out, pub: in};
    var I_rable: nM {priv: out, pub: in};
    var IP3: nM {priv: out, pub: in};
    var IP4: nM {priv: out, pub: in};
    var PI3K: nM {priv: out, pub: in};
    var PI3Kstar: nM {priv: out, pub: in};
    var pGrb2PI3K: nM {priv: out, pub: in};
    var pGrb2: nM {priv: out, pub: in};
    var Lyn: nM {priv: out, pub: in};
    var pFC: nM {priv: out, pub: in};
    var Syk: nM {priv: out, pub: in};
    var pSyk: nM {priv: out, pub: in};
    var pFCLyn: nM {priv: out, pub: in};
    var pFCSyk: nM {priv: out, pub: in};
    var pSykGrb2: nM {priv: out, pub: in};
    var Pi: nM {priv: out, pub: in};
    var Grb2: nM {priv: out, pub: in};
    var pLyn: nM {priv: out, pub: in};
    var hGdl4FC: nM {priv: out, pub: in};
    var FC: nM {priv: out, pub: in};
    var dl4: nM {priv: out, pub: in};
    var hGdl4: nM {priv: out, pub: in};
    var hG: nM {priv: out, pub: in};
    var Ca: nM {priv: out, pub: in};
    // Cooling 2009
    var stimEnd: s {priv: out, pub: in};
    // vav
    var vav_K19: flux {priv: in};
    var vav_pvav: nM {init: 0, priv: out};
    var mica: nM {init: 9.08381873879936e-14, priv: out};
    var nkg2d: nM {init: 571.399999999994, priv: out};
    var hE: nM {init: 516, priv: out};
    var nkg2a: nM {init: 1.28274883243152e-10, priv: out};
    var pshp: nM {init: 0, priv: out};
    var vav: nM {priv: out, pub: in};
    var pshp_cd94: nM {priv: out, pub: in};
    // Rac_PAK
    var RacGDP: nM {priv: out, pub: in};
    var PAKa: nM {priv: out, pub: in};
    // MAPK to TNF
    var Akt_kf27: first_order_rate_constant {priv: out, pub: in};
    var Akt_k27: nM {priv: out, pub: in};
    var Akt_V28: flux {priv: out, pub: in};
    var Akt_k28: nM {priv: out, pub: in};
    var Akt_kf29: second_order_rate_constant {priv: out, pub: in};
    var Akt_kb29: first_order_rate_constant {priv: out, pub: in};
    var Akt_V30: flux {priv: out, pub: in};
    var Akt_k30: nM {priv: out, pub: in};
    var Akt_kf31: first_order_rate_constant {priv: out, pub: in};
    var Akt_k31: nM {priv: out, pub: in};
    var Akt_V32: flux {priv: out, pub: in};
    var Akt_k32: nM {priv: out, pub: in};
    var Akt_kf33: first_order_rate_constant {priv: out, pub: in};
    var Akt_k33: nM {priv: out, pub: in};
    var Akt_k16: nM {priv: out, pub: in};
    var Akt_k18: nM {priv: out, pub: in};
    var ERK_MKP3: nM {priv: out, pub: in};
    var ERK_kf19: first_order_rate_constant {priv: out, pub: in};
    var ERK_k19: nM {priv: out, pub: in};
    var ERK_kf20: first_order_rate_constant {priv: out, pub: in};
    var ERK_k20: nM {priv: out, pub: in};
    var ERK_kf21: first_order_rate_constant {priv: out, pub: in};
    var ERK_k21: nM {priv: out, pub: in};
    var ERK_kf22: first_order_rate_constant {priv: out, pub: in};
    var ERK_k22: nM {priv: out, pub: in};
    var MEK_kf15: first_order_rate_constant {priv: out, pub: in};
    var MEK_k15: nM {priv: out, pub: in};
    var MEK_kf16: first_order_rate_constant {priv: out, pub: in};
    var MEK_k16: nM {priv: out, pub: in};
    var MEK_kf17: first_order_rate_constant {priv: out, pub: in};
    var MEK_k17: nM {priv: out, pub: in};
    var MEK_kf18: first_order_rate_constant {priv: out, pub: in};
    var MEK_k18: nM {priv: out, pub: in};
    var MEK_k31: nM {priv: out, pub: in};
    var MEK_k33: nM {priv: out, pub: in};
    var PI3k_kf1: second_order_rate_constant {priv: out, pub: in};
    var PI3k_kb1: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf2: second_order_rate_constant {priv: out, pub: in};
    var PI3k_kb2: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf3: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kb3: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf34: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kb34: first_order_rate_constant {priv: out, pub: in};
    var PI3k_V4: flux {priv: out, pub: in};
    var PI3k_k4: nM {priv: out, pub: in};
    var PI3k_kf5: second_order_rate_constant {priv: out, pub: in};
    var PI3k_kb5: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf6: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kb6: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf7: second_order_rate_constant {priv: out, pub: in};
    var PI3k_kb7: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf8: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kb8: second_order_rate_constant {priv: out, pub: in};
    var PI3k_kf9: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kb9: second_order_rate_constant {priv: out, pub: in};
    var PI3k_V10: flux {priv: out, pub: in};
    var PI3k_k10: nM {priv: out, pub: in};
    var PI3k_kf23: second_order_rate_constant {priv: out, pub: in};
    var PI3k_kb23: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf24: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kb24: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kf25: first_order_rate_constant {priv: out, pub: in};
    var PI3k_kb25: second_order_rate_constant {priv: out, pub: in};
    var PI3k_V26: flux {priv: out, pub: in};
    var PI3k_k26: nM {priv: out, pub: in};
    var Raf_kf13: first_order_rate_constant {priv: out, pub: in};
    var Raf_k13: nM {priv: out, pub: in};
    var Raf_kf14: first_order_rate_constant {priv: out, pub: in};
    var Raf_k14: nM {priv: out, pub: in};
    var RasGDPtoRasGTP_kf11: first_order_rate_constant {priv: out, pub: in};
    var RasGDPtoRasGTP_k11: nM {priv: out, pub: in};
    var RasGDPtoRasGTP_V12: flux {priv: out, pub: in};
    var RasGDPtoRasGTP_k12: nM {priv: out, pub: in};
    var PP2A: nM {priv: out, pub: in};
    var Raf_E: nM {priv: out, pub: in};
    var MEKPP: nM {priv: out, pub: in};
    var MEKP: nM {priv: out, pub: in};
    var MEK: nM {priv: out, pub: in};
    var P: nM {priv: out, pub: in};
    var PIP3: nM {priv: out, pub: in};
    var Akt: nM {priv: out, pub: in};
    var Akt_PIP3: nM {priv: out, pub: in};
    var Akt_PIP: nM {priv: out, pub: in};
    var Akt_PIPP: nM {priv: out, pub: in};
    var ERK: nM {priv: out, pub: in};
    var ERKP: nM {priv: out, pub: in};
    var ERKPP: nM {priv: out, pub: in};
    var R: nM {priv: out, pub: in};
    var HRG: nM {priv: out, pub: in};
    var R_HRG: nM {priv: out, pub: in};
    var R_HRG2: nM {priv: out, pub: in};
    var RP: nM {priv: out, pub: in};
    var Internalisation: nM {priv: out, pub: in};
    var R_Shc: nM {priv: out, pub: in};
    var Shc: nM {priv: out, pub: in};
    var R_ShP: nM {priv: out, pub: in};
    var GS: nM {priv: out, pub: in};
    var ShP: nM {priv: out, pub: in};
    var R_ShGS: nM {priv: out, pub: in};
    var ShGS: nM {priv: out, pub: in};
    var R_PI3K: nM {priv: out, pub: in};
    var PI3K_hatakeyama: nM {priv: out, pub: in};
    var R_PI3Kstar: nM {priv: out, pub: in};
    var PI3Kstar_hatakeyama: nM {priv: out, pub: in};
    var RasGTP: nM {priv: out, pub: in};
    var RasGDP: nM {priv: out, pub: in};
    var RAF: nM {priv: out, pub: in};
    var RAFstar: nM {priv: out, pub: in};
    var tcr_k_f21: second_order_rate_constant {priv: out, pub: in};
    var tcr_k_r21: first_order_rate_constant {priv: out, pub: in};
    var tpa: nM {priv: out, pub: in};
    var tcr: nM {priv: out, pub: in};
    var plc_k_f23: second_order_rate_constant {priv: out, pub: in};
    var plc_k_r23: first_order_rate_constant {priv: out, pub: in};
    var plc_k_f24: first_order_rate_constant {priv: out, pub: in};
    var plc_k_f25: second_order_rate_constant {priv: out, pub: in};
    var plc_k_r25: first_order_rate_constant {priv: out, pub: in};
    var plc: nM {priv: out, pub: in};
    var shc_k_f26: second_order_rate_constant {priv: out, pub: in};
    var shc_k_r26: first_order_rate_constant {priv: out, pub: in};
    var lat_k_f27: second_order_rate_constant {priv: out, pub: in};
    var lat_k_r27: first_order_rate_constant {priv: out, pub: in};
    var lat_k_f28: first_order_rate_constant {priv: out, pub: in};
    var lat_k_f29: second_order_rate_constant {priv: out, pub: in};
    var lat_k_r29: first_order_rate_constant {priv: out, pub: in};
    var lat: nM {priv: out, pub: in};
    var ERKPP_k_f30: first_order_rate_constant {priv: out, pub: in};
    var ERKPP_k_f31: first_order_rate_constant {priv: out, pub: in};
    var ERKPP_k_f32: first_order_rate_constant {priv: out, pub: in};
    var Zap70_k_f1: second_order_rate_constant {priv: out, pub: in};
    var Zap70_k_r1: second_order_rate_constant {priv: out, pub: in};
    var Zap70_k_f2: second_order_rate_constant {priv: out, pub: in};
    var Zap70_k_r2: first_order_rate_constant {priv: out, pub: in};
    var Zap70_k_f3: second_order_rate_constant {priv: out, pub: in};
    var Zap70_k_r3: second_order_rate_constant {priv: out, pub: in};
    var Zap70_k_f4: first_order_rate_constant {priv: out, pub: in};
    var Zap70_k_r4: second_order_rate_constant {priv: out, pub: in};
    var Zap70_k_f5: first_order_rate_constant {priv: out, pub: in};
    var plck: nM {priv: out, pub: in};
    var lck: nM {priv: out, pub: in};
    var zap70: nM {priv: out, pub: in};
    var ERKPP_TNF_c: nM {priv: out, pub: in};
    var plat: nM {priv: out, pub: in};
    var pplc: nM {priv: out, pub: in};
    // pZAP70
    var pzap70: nM {priv: out, pub: in};
    // ITG
    var icam: nM {priv: out, pub: in};
    var itg: nM {priv: out, pub: in};
    var icamitg: nM {priv: out, pub: in};
    var ITG_k_f1: second_order_rate_constant {priv: out, pub: in};
    var ITG_k_r1: first_order_rate_constant {priv: out, pub: in};
    // other
    var J_hGdl4: flux {priv: out, pub: out};
    var J_hGdl4FC: flux {priv: out, pub: out};
    var J_3K: flux {priv: out, pub: out};
    var J_5P: flux {priv: out, pub: out};
    var V_plc: flux {priv: out, pub: in};
    var J7: flux {priv: out, pub: out};
    var JNFAT_n_cyc: flux {priv: out, pub: out};
    var JNFAT_n_IFN: flux {priv: out, pub: out};
    var JNFAT_n_TNF: flux {priv: out, pub: out};
    var JNFAT_n_GSMCSF: flux {priv: out, pub: out};
    var JNFAT_IFN_rel: flux {priv: out, pub: out};
    var JNFAT_TNF_rel: flux {priv: out, pub: out};
    var JNFAT_GSMCSF_rel: flux {priv: out, pub: out};
    var JERKPP_IFN_rel: flux {priv: out, pub: out};
    var JERKPP_GMCSF_rel: flux {priv: out, pub: out};
    var JERKPP_n_IFN: flux {priv: out, pub: out};
    var JERKPP_n_GMCSF: flux {priv: out, pub: out};
    var J_hEpd12: flux {priv: out, pub: out};
    var J_hEactivation: flux {priv: out, pub: out};
    var J9: flux {priv: out, pub: out};
    var J_hCactivation: flux {priv: out, pub: out};
    var J_hEinhibition: flux {priv: out, pub: out};
    var J_hCpd12: flux {priv: out, pub: out};
    var J3: flux {priv: out, pub: out};
    var J6: flux {priv: out, pub: out};
    var J11: flux {priv: out, pub: out};
    var J12: flux {priv: out, pub: out};
    var J_vav: flux {priv: out, pub: out};
    var J_pvav: flux {priv: out, pub: out};
    var J_plat: flux {priv: out, pub: out};
    var J_plc_plc: flux {priv: out, pub: out};
    var J_pplc: flux {priv: out, pub: out};
    var J31: flux {priv: out, pub: out};
    var J_MEK: flux {priv: out, pub: out};
    var J_MEKPP: flux {priv: out, pub: out};
    var J71: flux {priv: out, pub: out};
    var J72: flux {priv: out, pub: out};
    var J81: flux {priv: out, pub: out};
    var J82: flux {priv: out, pub: out};
    var J19: flux {priv: out, pub: out};
    var J_IP3: nM {priv: out, pub: out};
    var inhibition_J6: flux {priv: out, pub: out};
    var inhibition_J16: flux {priv: out, pub: out};
    var inhibition_J26: flux {priv: out, pub: out};
    var inhibition_J36: flux {priv: out, pub: out};
    var inhibition_J46: flux {priv: out, pub: out};
    // cytokines
    var IFN_c: nM {priv: out, pub: in};
    var TNF_c: nM {priv: out, pub: in};
    var GMCSF_c: nM {priv: out, pub: in};
    // mapping
    var pLck: nM {priv: out, pub: in};
    var V_PLC_lat: flux {priv: out, pub: out};
  enddef;
  def map between environment and geometry for
    vars time and time;
  enddef;
  def map between free_parameters and geometry for
    vars NFAT2cyt_k_f1 and NFAT2cyt_k_f1;
    vars NFAT2cyt_k_f2 and NFAT2cyt_k_f2;
    vars NFAT2cyt_k_f3 and NFAT2cyt_k_f3;
    vars ERKPP2cyt_k_f41 and ERKPP2cyt_k_f41;
    vars ERKPP2cyt_k_f43 and ERKPP2cyt_k_f43;
    vars CytRel_k_f4 and CytRel_k_f4;
    vars CytRel_k_f5 and CytRel_k_f5;
    vars CytRel_k_f6 and CytRel_k_f6;
    vars CytRel_k_f42 and CytRel_k_f42;
    vars CytRel_k_f44 and CytRel_k_f44;
    vars PI3K_k_f2 and PI3K_k_f2;
    vars PI3K_k_r2 and PI3K_k_r2;
    vars PI3K_k_f3 and PI3K_k_f3;
    vars hG_activating_dl4_k_f10 and hG_activating_dl4_k_f10;
    vars hG_activating_dl4_k_r10 and hG_activating_dl4_k_r10;
    vars hgdl4_FC_k_f21 and hgdl4_FC_k_f21;
    vars hgdl4_FC_k_r21 and hgdl4_FC_k_r21;
    vars hE_activating_cd94_k_f8 and hE_activating_cd94_k_f8;
    vars hE_activating_cd94_k_r8 and hE_activating_cd94_k_r8;
    vars hE_activating_cd94_k_f9 and hE_activating_cd94_k_f9;
    vars hE_activating_cd94_k_r9 and hE_activating_cd94_k_r9;
    vars hE_activating_cd94_k_f10 and hE_activating_cd94_k_f10;
    vars hE_activating_cd94_k_r10 and hE_activating_cd94_k_r10;
    vars hE_activating_cd94_k_f11 and hE_activating_cd94_k_f11;
    vars hC_activating_kir2ds1_k_f1 and hC_activating_kir2ds1_k_f1;
    vars hC_activating_kir2ds1_k_r1 and hC_activating_kir2ds1_k_r1;
    vars hC_activating_kir2ds1_k_f2 and hC_activating_kir2ds1_k_f2;
    vars hC_activating_kir2ds1_k_r2 and hC_activating_kir2ds1_k_r2;
    vars hC_activating_kir2ds1_k_f3 and hC_activating_kir2ds1_k_f3;
    vars hC_activating_kir2ds1_k_r3 and hC_activating_kir2ds1_k_r3;
    vars hC_activating_kir2ds1_k_f4 and hC_activating_kir2ds1_k_f4;
    vars hC_activating_kir2dl_k_f1 and hC_activating_kir2dl_k_f1;
    vars hC_activating_kir2dl_k_r1 and hC_activating_kir2dl_k_r1;
    vars hC_activating_kir2dl_k_f2 and hC_activating_kir2dl_k_f2;
    vars hC_activating_kir2dl_k_r2 and hC_activating_kir2dl_k_r2;
    vars hC_activating_kir2dl_k_f3 and hC_activating_kir2dl_k_f3;
    vars hC_activating_kir2dl_k_f4 and hC_activating_kir2dl_k_f4;
    vars hC_activating_kir2dl_k_r4 and hC_activating_kir2dl_k_r4;
    vars hC_activating_kir2dl_k_f5 and hC_activating_kir2dl_k_f5;
    vars hC_activating_kir2dl_k_f6 and hC_activating_kir2dl_k_f6;
    vars hC_activating_kir2dl_k_r6 and hC_activating_kir2dl_k_r6;
    vars hC_activating_kir2dl_k_f7 and hC_activating_kir2dl_k_f7;
    vars hG_activating_kir2dl4_k_f11 and hG_activating_kir2dl4_k_f11;
    vars hG_activating_kir2dl4_k_r11 and hG_activating_kir2dl4_k_r11;
    vars hG_activating_kir2dl4_k_f12 and hG_activating_kir2dl4_k_f12;
    vars hG_activating_kir2dl4_k_r12 and hG_activating_kir2dl4_k_r12;
    vars hG_activating_kir2dl4_k_f13 and hG_activating_kir2dl4_k_f13;
    vars hG_activating_kir2dl4_k_f14 and hG_activating_kir2dl4_k_f14;
    vars hG_activating_kir2dl4_k_r14 and hG_activating_kir2dl4_k_r14;
    vars hG_activating_kir2dl4_k_f15 and hG_activating_kir2dl4_k_f15;
    vars hG_activating_kir2dl4_k_f16 and hG_activating_kir2dl4_k_f16;
    vars hG_activating_kir2dl4_k_r16 and hG_activating_kir2dl4_k_r16;
    vars hG_activating_kir2dl4_k_f17 and hG_activating_kir2dl4_k_f17;
    vars hG_activating_lilrb_k_f21 and hG_activating_lilrb_k_f21;
    vars hG_activating_lilrb_k_r21 and hG_activating_lilrb_k_r21;
    vars hG_activating_lilrb_k_f22 and hG_activating_lilrb_k_f22;
    vars hG_activating_lilrb_k_r22 and hG_activating_lilrb_k_r22;
    vars hG_activating_lilrb_k_f23 and hG_activating_lilrb_k_f23;
    vars hG_activating_lilrb_k_f24 and hG_activating_lilrb_k_f24;
    vars hG_activating_lilrb_k_r24 and hG_activating_lilrb_k_r24;
    vars hG_activating_lilrb_k_f25 and hG_activating_lilrb_k_f25;
    vars hG_activating_lilrb_k_f26 and hG_activating_lilrb_k_f26;
    vars hG_activating_lilrb_k_r26 and hG_activating_lilrb_k_r26;
    vars hG_activating_lilrb_k_f27 and hG_activating_lilrb_k_f27;
    vars hA_activating_kir3dl1_k_f31 and hA_activating_kir3dl1_k_f31;
    vars hA_activating_kir3dl1_k_r31 and hA_activating_kir3dl1_k_r31;
    vars hA_activating_kir3dl1_k_f32 and hA_activating_kir3dl1_k_f32;
    vars hA_activating_kir3dl1_k_r32 and hA_activating_kir3dl1_k_r32;
    vars hA_activating_kir3dl1_k_f33 and hA_activating_kir3dl1_k_f33;
    vars hA_activating_kir3dl1_k_f34 and hA_activating_kir3dl1_k_f34;
    vars hA_activating_kir3dl1_k_r34 and hA_activating_kir3dl1_k_r34;
    vars hA_activating_kir3dl1_k_f35 and hA_activating_kir3dl1_k_f35;
    vars hA_activating_kir3dl1_k_f36 and hA_activating_kir3dl1_k_f36;
    vars hA_activating_kir3dl1_k_r36 and hA_activating_kir3dl1_k_r36;
    vars hA_activating_kir3dl1_k_f37 and hA_activating_kir3dl1_k_f37;
    vars hB_activating_kir3dl2_k_f41 and hB_activating_kir3dl2_k_f41;
    vars hB_activating_kir3dl2_k_r41 and hB_activating_kir3dl2_k_r41;
    vars hB_activating_kir3dl2_k_f42 and hB_activating_kir3dl2_k_f42;
    vars hB_activating_kir3dl2_k_r42 and hB_activating_kir3dl2_k_r42;
    vars hB_activating_kir3dl2_k_f43 and hB_activating_kir3dl2_k_f43;
    vars hB_activating_kir3dl2_k_f44 and hB_activating_kir3dl2_k_f44;
    vars hB_activating_kir3dl2_k_r44 and hB_activating_kir3dl2_k_r44;
    vars hB_activating_kir3dl2_k_f45 and hB_activating_kir3dl2_k_f45;
    vars hB_activating_kir3dl2_k_f46 and hB_activating_kir3dl2_k_f46;
    vars hB_activating_kir3dl2_k_r46 and hB_activating_kir3dl2_k_r46;
    vars hB_activating_kir3dl2_k_f47 and hB_activating_kir3dl2_k_f47;
    vars k_f100 and k_f100;
    vars k_f101 and k_f101;
    vars k_f102 and k_f102;
  enddef;
  def map between fixed_parameters and geometry for
    vars NFATcyc_k_f1 and NFATcyc_k_f1;
    vars NFATcyc_k_r1 and NFATcyc_k_r1;
    vars NFATcyc_k_f2 and NFATcyc_k_f2;
    vars NFATcyc_k_f3 and NFATcyc_k_f3;
    vars NFATcyc_k_r3 and NFATcyc_k_r3;
    vars NFATcyc_k_f4 and NFATcyc_k_f4;
    vars Ccn and Ccn;
    vars M and M;
    vars Ntot and Ntot;
    vars K_mN and K_mN;
    vars n and n;
    vars K_dN and K_dN;
    // vars stimEnd and stimEnd;
    // Dupont 1997
    vars V_k and V_k;
    vars K_k and K_k;
    vars K_d and K_d;
    vars n_d and n_d;
    vars V_p1 and V_p1;
    vars K_p1 and K_p1;
    vars V_p2 and V_p2;
    vars K_p2 and K_p2;
    vars k and k;
    vars gamma and gamma;
    vars alpha and alpha;
    vars Ca_tot and Ca_tot;
    vars V_MP and V_MP;
    vars K_p and K_p;
    vars n_p and n_p;
    vars K_act and K_act;
    vars K_inh and K_inh;
    vars K_minus and K_minus;
    vars b and b;
    vars K_1 and K_1;
    vars K_IP and K_IP;
    vars FCepsilonRI_k_f1 and FCepsilonRI_k_f1;
    vars FCepsilonRI_k_r1 and FCepsilonRI_k_r1;
    vars FCepsilonRI_k_f2 and FCepsilonRI_k_f2;
    vars FCepsilonRI_k_f3 and FCepsilonRI_k_f3;
    vars FCepsilonRI_k_f4 and FCepsilonRI_k_f4;
    vars FCepsilonRI_k_r4 and FCepsilonRI_k_r4;
    vars FCepsilonRI_k_f5 and FCepsilonRI_k_f5;
    vars FCepsilonRI_k_f6 and FCepsilonRI_k_f6;
    vars FCepsilonRI_k_r6 and FCepsilonRI_k_r6;
    vars FCepsilonRI_k_f7 and FCepsilonRI_k_f7;
    // MAPK to TNF
    vars Akt_kf27 and Akt_kf27;
    vars Akt_k27 and Akt_k27;
    vars Akt_V28 and Akt_V28;
    vars Akt_k28 and Akt_k28;
    vars Akt_kf29 and Akt_kf29;
    vars Akt_kb29 and Akt_kb29;
    vars Akt_V30 and Akt_V30;
    vars Akt_k30 and Akt_k30;
    vars Akt_kf31 and Akt_kf31;
    vars Akt_k31 and Akt_k31;
    vars Akt_V32 and Akt_V32;
    vars Akt_k32 and Akt_k32;
    vars Akt_kf33 and Akt_kf33;
    vars Akt_k33 and Akt_k33;
    vars Akt_k16 and Akt_k16;
    vars Akt_k18 and Akt_k18;
    vars ERK_MKP3 and ERK_MKP3;
    vars ERK_kf19 and ERK_kf19;
    vars ERK_k19 and ERK_k19;
    vars ERK_kf20 and ERK_kf20;
    vars ERK_k20 and ERK_k20;
    vars ERK_kf21 and ERK_kf21;
    vars ERK_k21 and ERK_k21;
    vars ERK_kf22 and ERK_kf22;
    vars ERK_k22 and ERK_k22;
    vars MEK_kf15 and MEK_kf15;
    vars MEK_k15 and MEK_k15;
    vars MEK_kf16 and MEK_kf16;
    vars MEK_k16 and MEK_k16;
    vars MEK_kf17 and MEK_kf17;
    vars MEK_k17 and MEK_k17;
    vars MEK_kf18 and MEK_kf18;
    vars MEK_k18 and MEK_k18;
    vars MEK_k31 and MEK_k31;
    vars MEK_k33 and MEK_k33;
    vars PI3k_kf1 and PI3k_kf1;
    vars PI3k_kb1 and PI3k_kb1;
    vars PI3k_kf2 and PI3k_kf2;
    vars PI3k_kb2 and PI3k_kb2;
    vars PI3k_kf3 and PI3k_kf3;
    vars PI3k_kb3 and PI3k_kb3;
    vars PI3k_kf34 and PI3k_kf34;
    vars PI3k_kb34 and PI3k_kb34;
    vars PI3k_V4 and PI3k_V4;
    vars PI3k_k4 and PI3k_k4;
    vars PI3k_kf5 and PI3k_kf5;
    vars PI3k_kb5 and PI3k_kb5;
    vars PI3k_kf6 and PI3k_kf6;
    vars PI3k_kb6 and PI3k_kb6;
    vars PI3k_kf7 and PI3k_kf7;
    vars PI3k_kb7 and PI3k_kb7;
    vars PI3k_kf8 and PI3k_kf8;
    vars PI3k_kb8 and PI3k_kb8;
    vars PI3k_kf9 and PI3k_kf9;
    vars PI3k_kb9 and PI3k_kb9;
    vars PI3k_V10 and PI3k_V10;
    vars PI3k_k10 and PI3k_k10;
    vars PI3k_kf23 and PI3k_kf23;
    vars PI3k_kb23 and PI3k_kb23;
    vars PI3k_kf24 and PI3k_kf24;
    vars PI3k_kb24 and PI3k_kb24;
    vars PI3k_kf25 and PI3k_kf25;
    vars PI3k_kb25 and PI3k_kb25;
    vars PI3k_V26 and PI3k_V26;
    vars PI3k_k26 and PI3k_k26;
    vars Raf_kf13 and Raf_kf13;
    vars Raf_k13 and Raf_k13;
    vars Raf_kf14 and Raf_kf14;
    vars Raf_k14 and Raf_k14;
    vars RasGDPtoRasGTP_kf11 and RasGDPtoRasGTP_kf11;
    vars RasGDPtoRasGTP_k11 and RasGDPtoRasGTP_k11;
    vars RasGDPtoRasGTP_V12 and RasGDPtoRasGTP_V12;
    vars RasGDPtoRasGTP_k12 and RasGDPtoRasGTP_k12;
    vars PP2A and PP2A;
    vars Raf_E and Raf_E;
    vars tcr_k_f21 and tcr_k_f21;
    vars tcr_k_r21 and tcr_k_r21;
    vars plc_k_f23 and plc_k_f23;
    vars plc_k_r23 and plc_k_r23;
    vars plc_k_f24 and plc_k_f24;
    vars plc_k_f25 and plc_k_f25;
    vars plc_k_r25 and plc_k_r25;
    vars shc_k_f26 and shc_k_f26;
    vars shc_k_r26 and shc_k_r26;
    vars lat_k_f27 and lat_k_f27;
    vars lat_k_r27 and lat_k_r27;
    vars lat_k_f28 and lat_k_f28;
    vars lat_k_f29 and lat_k_f29;
    vars lat_k_r29 and lat_k_r29;
    vars ERKPP_k_f30 and ERKPP_k_f30;
    vars ERKPP_k_f31 and ERKPP_k_f31;
    vars ERKPP_k_f32 and ERKPP_k_f32;
    vars Zap70_k_f1 and Zap70_k_f1;
    vars Zap70_k_r1 and Zap70_k_r1;
    vars Zap70_k_f2 and Zap70_k_f2;
    vars Zap70_k_r2 and Zap70_k_r2;
    vars Zap70_k_f3 and Zap70_k_f3;
    vars Zap70_k_r3 and Zap70_k_r3;
    vars Zap70_k_f4 and Zap70_k_f4;
    vars Zap70_k_r4 and Zap70_k_r4;
    vars Zap70_k_f5 and Zap70_k_f5;
  enddef;
  def map between variables and geometry for
    // activation receptors
    vars nkg2c and nkg2c;
    vars d12 and d12;
    vars hE and hE;
    vars hEpd12 and hEpd12;
    vars hEd12plck and hEd12plck;
    vars hEpd12cd45 and hEpd12cd45;
    vars kir2ds1 and kir2ds1;
    vars hC and hC;
    vars d12 and d12;
    vars hC_plck and hC_plck;
    vars hCpd12 and hCpd12;
    vars hCpd12cd45 and hCpd12cd45;
    // inhibition receptors
    vars kir2dl and kir2dl;
    vars inhibition_shp and inhibition_shp;
    vars inhibition_plck and inhibition_plck;
    vars cd45 and cd45;
    vars pshp_kir2dl and pshp_kir2dl;
    vars inhibition_kir2dl4 and inhibition_kir2dl4;
    vars pshp_dl4 and pshp_dl4;
    vars lilrb and lilrb;
    vars pshp_lil and pshp_lil;
    vars hA and hA;
    vars kir3dl1 and kir3dl1;
    vars pshp_dl1 and pshp_dl1;
    vars hB and hB;
    vars kir3dl2 and kir3dl2;
    vars pshp_dl2 and pshp_dl2;
    // NFAT
    vars NFATN_c and NFATN_c;
    vars NFATN_n and NFATN_n;
    vars NFATp_c and NFATp_c;
    vars NFATp_n and NFATp_n;
    vars nuclearNFATpercent and nuclearNFATpercent;
    vars nuclearNFAT and nuclearNFAT;
    vars NFATN_c_percent and NFATN_c_percent;
    vars act_N and act_N;
    vars NFAT_IFN_c and NFAT_IFN_c;
    vars NFAT_TNF_c and NFAT_TNF_c;
    vars NFAT_GSMCSF_c and NFAT_GSMCSF_c;
    vars ERKPP_IFN_c and ERKPP_IFN_c;
    vars ERKPP_GMCSF_c and ERKPP_GMCSF_c;
    vars IFN_released and IFN_released;
    vars TNF_released and TNF_released;
    vars GMCSF_released and GMCSF_released;
    // Dupont 1997
    vars R_des and R_des;
    vars Ca_cyto and Ca_cyto;
    vars I_ra and I_ra;
    vars I_rable and I_rable;
    vars IP3 and IP3;
    vars IP4 and IP4;
    vars PI3K and PI3K;
    vars PI3Kstar and PI3Kstar;
    vars pGrb2PI3K and pGrb2PI3K;
    vars pGrb2 and pGrb2;
    vars Lyn and Lyn;
    vars pFC and pFC;
    vars Syk and Syk;
    vars pSyk and pSyk;
    vars pFCLyn and pFCLyn;
    vars pFCSyk and pFCSyk;
    vars pSykGrb2 and pSykGrb2;
    vars Pi and Pi;
    vars Grb2 and Grb2;
    vars pLyn and pLyn;
    vars hGdl4FC and hGdl4FC;
    vars FC and FC;
    vars dl4 and dl4;
    vars hGdl4 and hGdl4;
    vars hG and hG;
    vars Ca and Ca;
    // MAPK to TNF
    vars MEKPP and MEKPP;
    vars MEKP and MEKP;
    vars MEK and MEK;
    vars P and P;
    vars PIP3 and PIP3;
    vars Akt and Akt;
    vars Akt_PIP3 and Akt_PIP3;
    vars Akt_PIP and Akt_PIP;
    vars Akt_PIPP and Akt_PIPP;
    vars ERK and ERK;
    vars ERKP and ERKP;
    vars ERKPP and ERKPP;
    vars R and R;
    vars HRG and HRG;
    vars R_HRG and R_HRG;
    vars R_HRG2 and R_HRG2;
    vars RP and RP;
    vars Internalisation and Internalisation;
    vars R_Shc and R_Shc;
    vars Shc and Shc;
    vars R_ShP and R_ShP;
    vars GS and GS;
    vars ShP and ShP;
    vars R_ShGS and R_ShGS;
    vars ShGS and ShGS;
    vars R_PI3K and R_PI3K;
    vars PI3K_hatakeyama and PI3K_hatakeyama;
    vars R_PI3Kstar and R_PI3Kstar;
    vars PI3Kstar_hatakeyama and PI3Kstar_hatakeyama;
    vars RasGTP and RasGTP;
    vars RasGDP and RasGDP;
    vars RAF and RAF;
    vars RAFstar and RAFstar;
    vars tpa and tpa;
    vars tcr and tcr;
    vars plc and plc;
    vars lat and lat;
    vars plck and plck;
    vars lck and lck;
    vars zap70 and zap70;
    vars ERKPP_TNF_c and ERKPP_TNF_c;
    vars plat and plat;
    vars pplc and pplc;
    // pZAP70
    vars pzap70 and pzap70;
    // vav
    vars vav and vav;
    vars pshp_cd94 and pshp_cd94;
    // Rac_PAK
    vars PAKa and PAKa;
    // itg
    vars icam and icam;
    vars itg and itg;
    vars icamitg and icamitg;
    // mapping
    vars pLck and pLck;
    vars RacGDP and RacGDP;
  enddef;
  def map between geometry and calcineurin for
    vars time and time;
    vars M and M;
    vars Ntot and Ntot;
    vars K_mN and K_mN;
    vars n and n;
    vars K_dN and K_dN;
    vars J_IP3 and Ca;
    vars act_N and act_N;
  enddef;
  def map between geometry and NFAT_Cycling for
    vars time and time;
    vars Ccn and Ccn;
    vars NFATcyc_k_f1 and k_f1;
    vars NFATcyc_k_r1 and k_r1;
    vars NFATcyc_k_f2 and k_f2;
    vars NFATcyc_k_f3 and k_f3;
    vars NFATcyc_k_r3 and k_r3;
    vars NFATcyc_k_f4 and k_f4;
    vars Ntot and Ntot;
    vars NFATN_c and NFATN_c;
    vars NFATN_n and NFATN_n;
    vars NFATp_c and NFATp_c;
    vars NFATp_n and NFATp_n;
    vars act_N and act_N;
    vars JNFAT_n_cyc and JNFAT_n_cyc;
  enddef;
  def map between geometry and NFATcyc_interface for
    vars Ccn and Ccn;
    vars NFATN_c and NFATN_c;
    vars NFATN_n and NFATN_n;
    vars NFATp_c and NFATp_c;
    vars NFATp_n and NFATp_n;
    vars nuclearNFATpercent and nuclearNFATpercent;
    vars nuclearNFAT and nuclearNFAT;
    vars NFATN_c_percent and NFATN_c_percent;
  enddef;
  def map between geometry and NFAT_to_IFN for
    vars time and time;
    vars NFATN_n and NFATN_n;
    vars JNFAT_n_IFN and JNFAT_n_IFN;
    vars NFAT2cyt_k_f1 and k_f1;
  enddef;
  def map between geometry and NFAT_to_TNF for
    vars time and time;
    vars NFATN_n and NFATN_n;
    vars JNFAT_n_TNF and JNFAT_n_TNF;
    vars NFAT2cyt_k_f2 and k_f2;
  enddef;
  def map between geometry and NFAT_to_GSMCSF for
    vars time and time;
    vars NFATN_n and NFATN_n;
    vars JNFAT_n_GSMCSF and JNFAT_n_GSMCSF;
    vars NFAT2cyt_k_f3 and k_f3;
  enddef;
  def map between geometry and nuclearNFAT for
    vars time and time;
    vars NFATN_n and NFATN_n;
    vars JNFAT_n_cyc and JNFAT_n_cyc;
    vars JNFAT_n_IFN and JNFAT_n_IFN;
    vars JNFAT_n_TNF and JNFAT_n_TNF;
    vars JNFAT_n_GSMCSF and JNFAT_n_GSMCSF;
  enddef;
  def map between geometry and IFN_release for
    vars time and time;
    vars k_f101 and k_f101;
    vars IFN_released and IFN_released;
    vars IFN_c and IFN_c;
  enddef;
  def map between geometry and TNF_release for
    vars time and time;
    vars k_f100 and k_f100;
    vars TNF_c and TNF_c;
    vars TNF_released and TNF_released;
  enddef;
  def map between geometry and GSMCSF_release for
    vars time and time;
    vars k_f102 and k_f102;
    vars GMCSF_c and GMCSF_c;
    vars GMCSF_released and GMCSF_released;
  enddef;
  def map between geometry and intracellular_NFAT_to_IFN for
    vars time and time;
    vars NFAT_IFN_c and NFAT_IFN_c;
    vars JNFAT_IFN_rel and JNFAT_IFN_rel;
    vars JNFAT_n_IFN and JNFAT_n_IFN;
    vars CytRel_k_f4 and k_f4;
  enddef;
  def map between geometry and intracellular_NFAT_to_TNF for
    vars time and time;
    vars NFAT_TNF_c and NFAT_TNF_c;
    vars JNFAT_TNF_rel and JNFAT_TNF_rel;
    vars JNFAT_n_TNF and JNFAT_n_TNF;
    vars CytRel_k_f5 and k_f5;
  enddef;
  def map between geometry and intracellular_NFAT_to_GSMCSF for
    vars time and time;
    vars NFAT_GSMCSF_c and NFAT_GSMCSF_c;
    vars JNFAT_GSMCSF_rel and JNFAT_GSMCSF_rel;
    vars JNFAT_n_GSMCSF and JNFAT_n_GSMCSF;
    vars CytRel_k_f6 and k_f6;
  enddef;
  def map between geometry and R_des for
    vars time and time;
    vars R_des and R_des;
    vars K_plus and K_plus;
    vars Ca_cyto and C_cyto;
    vars n_i and n_i;
    vars K_act and K_act;
    vars n_a and n_a;
    vars K_minus and K_minus;
    vars K_inh and K_inh;
  enddef;
  def map between geometry and C_cyto for
    vars time and time;
    vars Ca_cyto and C_cyto;
    vars I_ra and I_ra;
    vars K_1 and K_1;
    vars b and b;
    vars Ca_tot and Ca_tot;
    vars alpha and alpha;
    vars V_MP and V_MP;
    vars n_p and n_p;
    vars K_p and K_p;
    vars n_i and n_i;
  enddef;
  def map between geometry and I_ra for
    vars I_ra and I_ra;
    vars I_rable and I_rable;
    vars Ca_cyto and C_cyto;
    vars n_a and n_a;
    vars K_act and K_act;
  enddef;
  def map between I_rable and geometry for
    vars I_rable and I_rable;
    vars IP3 and IP3;
    vars K_IP and K_IP;
    vars R_des and R_des;
  enddef;
  def map between IP3 and geometry for
    vars time and time;
    vars IP3 and IP3;
    vars V_3K and J_3K;
    vars V_5P and J_5P;
  enddef;
  def map between V_PLC and IP3 for
    vars V_PLC_pi3k and V_PLC_pi3k;
  enddef;
  def map between V_PLC and geometry for
    vars gamma and gamma;
    vars V_plc and V_plc;
    vars PI3Kstar and PI3Kstar;
  enddef;
  def map between geometry and V_3K for
    vars Ca_cyto and C_cyto;
    vars J_3K and V_3K;
    vars IP3 and IP3;
    vars K_d and K_d;
    vars K_k and K_k;
    vars n_d and n_d;
    vars V_k and V_k;
  enddef;
  def map between V_5P and geometry for
    vars V_5P and J_5P;
    vars IP3 and IP3;
    vars V_p1 and V_p1;
    vars K_p1 and K_p1;
    vars K_p2 and K_p2;
  enddef;
  def map between geometry and PI3K for
    vars time and time;
    vars PI3K_k_f2 and k_f2;
    vars PI3K_k_r2 and k_r2;
    vars PI3K_k_f3 and k_f3;
    vars pGrb2 and pGrb2;
    vars PI3K and PI3K;
    vars pGrb2PI3K and pGrb2PI3K;
    vars J7 and J7;
  enddef;
  def map between geometry and FCepsilonRI for
    vars time and time;
    vars FCepsilonRI_k_f1 and k_f1;
    vars FCepsilonRI_k_r1 and k_r1;
    vars FCepsilonRI_k_f2 and k_f2;
    vars FCepsilonRI_k_f3 and k_f3;
    vars FCepsilonRI_k_f4 and k_f4;
    vars FCepsilonRI_k_r4 and k_r4;
    vars FCepsilonRI_k_f5 and k_f5;
    vars FCepsilonRI_k_f6 and k_f6;
    vars FCepsilonRI_k_r6 and k_r6;
    vars FCepsilonRI_k_f7 and k_f7;
    vars Lyn and Lyn;
    vars hGdl4FC and hGdl4FC;
    vars FC and FC;
    vars pFC and pFC;
    vars Syk and Syk;
    vars pSyk and pSyk;
    vars pGrb2 and pGrb2;
    vars pFCLyn and pFCLyn;
    vars pFCSyk and pFCSyk;
    vars pSykGrb2 and pSykGrb2;
    vars Pi and Pi;
    vars Grb2 and Grb2;
    vars pLyn and pLyn;
    vars J7 and J7;
    vars J_hGdl4FC and J_hGdl4FC;
  enddef;
  def map between geometry and hG_activating_dl4 for
    vars time and time;
    vars hG_activating_dl4_k_f10 and k_f10;
    vars hG_activating_dl4_k_r10 and k_r10;
    vars dl4 and dl4;
    vars hGdl4 and hGdl4;
    vars hG and hG;
    vars J_hGdl4 and J_hGdl4;
  enddef;
  def map between geometry and hgdl4_FC for
    vars time and time;
    vars FC and free_FC;
    vars hGdl4FC and hGdl4FC;
    vars hGdl4 and hGdl4;
    vars J_hGdl4 and J_hGdl4;
    vars J_hGdl4FC and J_hGdl4FC;
    vars hgdl4_FC_k_f21 and k_f21;
    vars hgdl4_FC_k_r21 and k_r21;
  enddef;
  def map between vav_activation and geometry for
    vars time and time;
    vars k_f1 and vav_k_f1;
    vars k_r1 and vav_k_r1;
    vars k_f2 and vav_k_f2;
    vars k_r2 and vav_k_r2;
    vars k_f3 and vav_k_f3;
    vars k_r3 and vav_k_r3;
    vars k_f4 and vav_k_f4;
    vars k_f5 and vav_k_f5;
    vars k_r5 and vav_k_r5;
    vars k_f6 and vav_k_f6;
    vars k_f7 and vav_k_f7;
    vars k_r7 and vav_k_r7;
    vars k_f8 and vav_k_f8;
    vars pvav and vav_pvav;
    vars mica and mica;
    vars nkg2d and nkg2d;
    vars J_vav and J_vav;
    vars J_pvav and J_pvav;
    vars vav and vav;
    vars J19 and J19;
  enddef;
  def map between vav_inhibition and geometry for
    vars time and time;
    vars k_f11 and vav_k_f11;
    vars k_r11 and vav_k_r11;
    vars k_f12 and vav_k_f12;
    vars k_r12 and vav_k_r12;
    vars k_f13 and vav_k_f13;
    vars k_f14 and vav_k_f14;
    vars k_r14 and vav_k_r14;
    vars k_f15 and vav_k_f15;
    vars k_f16 and vav_k_f16;
    vars k_r16 and vav_k_r16;
    vars k_f17 and vav_k_f17;
    vars k_f19 and vav_k_f19;
    vars K19 and vav_K19;
    vars pvav and vav_pvav;
    vars hE and hE;
    vars nkg2a and nkg2a;
    vars pshp and pshp;
    vars pshp_cd94 and pshp_cd94;
    vars J19 and J19;
    vars J_hEinhibition and J_hEinhibition;
  enddef;
  def map between geometry and RacPAK for
    vars time and time;
    vars vav_pvav and pvav;
    vars RacGDP and RacGDP;
    vars PAKa and PAKa;
  enddef;
  def map between geometry and Akt for
    vars time and time;
    vars PP2A and PP2A;
    vars Akt_kf27 and kf27;
    vars Akt_k27 and k27;
    vars Akt_V28 and V28;
    vars Akt_k28 and k28;
    vars Akt_kf29 and kf29;
    vars Akt_kb29 and kb29;
    vars Akt_V30 and V30;
    vars Akt_k30 and k30;
    vars Akt_kf31 and kf31;
    vars Akt_k31 and k31;
    vars Akt_V32 and V32;
    vars Akt_k32 and k32;
    vars Akt_kf33 and kf33;
    vars Akt_k33 and k33;
    vars Akt_k16 and k16;
    vars Akt_k18 and k18;
    vars P and P;
    vars PIP3 and PIP3;
    vars Akt and Akt;
    vars Akt_PIP3 and Akt_PIP3;
    vars Akt_PIP and Akt_PIP;
    vars Akt_PIPP and Akt_PIPP;
    vars MEKP and MEKP;
    vars MEKPP and MEKPP;
    vars PI3Kstar_hatakeyama and PI3Kstar_hatakeyama;
  enddef;
  def map between geometry and ERK for
    vars time and time;
    vars ERK_kf19 and kf19;
    vars ERK_k19 and k19;
    vars ERK_kf20 and kf20;
    vars ERK_k20 and k20;
    vars ERK_kf21 and kf21;
    vars ERK_k21 and k21;
    vars ERK_kf22 and kf22;
    vars ERK_k22 and k22;
    vars ERK_MKP3 and MKP3;
    vars ERK and ERK;
    vars ERKP and ERKP;
    vars ERKPP and ERKPP;
    vars MEKPP and MEKPP;
  enddef;
  def map between geometry and MEK for
    vars time and time;
    vars PP2A and PP2A;
    vars MEK_kf15 and kf15;
    vars MEK_k15 and k15;
    vars MEK_kf16 and kf16;
    vars MEK_k16 and k16;
    vars MEK_kf17 and kf17;
    vars MEK_k17 and k17;
    vars MEK_kf18 and kf18;
    vars MEK_k18 and k18;
    vars MEK_k31 and k31;
    vars MEK_k33 and k33;
    vars MEKP and MEKP;
    vars MEK and MEK;
    vars MEKPP and MEKPP;
    vars Akt_PIP and Akt_PIP;
    vars Akt_PIPP and Akt_PIPP;
    vars RAFstar and RAFstar;
    vars J_MEK and J_MEK;
    vars J_MEKPP and J_MEKPP;
  enddef;
  def map between geometry and PI3K_hatakeyama for
    vars time and time;
    vars PI3k_kf1 and kf1;
    vars PI3k_kb1 and kb1;
    vars PI3k_kf2 and kf2;
    vars PI3k_kb2 and kb2;
    vars PI3k_kf3 and kf3;
    vars PI3k_kb3 and kb3;
    vars PI3k_kf34 and kf34;
    vars PI3k_kb34 and kb34;
    vars PI3k_V4 and V4;
    vars PI3k_k4 and k4;
    vars PI3k_kf5 and kf5;
    vars PI3k_kb5 and kb5;
    vars PI3k_kf6 and kf6;
    vars PI3k_kb6 and kb6;
    vars PI3k_kf7 and kf7;
    vars PI3k_kb7 and kb7;
    vars PI3k_kf8 and kf8;
    vars PI3k_kb8 and kb8;
    vars PI3k_kf9 and kf9;
    vars PI3k_kb9 and kb9;
    vars PI3k_V10 and V10;
    vars PI3k_k10 and k10;
    vars PI3k_kf23 and kf23;
    vars PI3k_kb23 and kb23;
    vars PI3k_kf24 and kf24;
    vars PI3k_kb24 and kb24;
    vars PI3k_kf25 and kf25;
    vars PI3k_kb25 and kb25;
    vars PI3k_V26 and V26;
    vars PI3k_k26 and k26;
    vars R and R;
    vars Shc and Shc;
    vars PI3K_hatakeyama and PI3K_hatakeyama;
    vars HRG and HRG;
    vars R_HRG and R_HRG;
    vars R_HRG2 and R_HRG2;
    vars Internalisation and Internalisation;
    vars RP and RP;
    vars R_Shc and R_Shc;
    vars R_ShP and R_ShP;
    vars ShP and ShP;
    vars R_ShGS and R_ShGS;
    vars ShGS and ShGS;
    vars GS and GS;
    vars R_PI3K and R_PI3K;
    vars R_PI3Kstar and R_PI3Kstar;
    vars PI3Kstar_hatakeyama and PI3Kstar_hatakeyama;
  enddef;
  def map between geometry and RAF for
    vars time and time;
    vars Raf_kf13 and kf13;
    vars Raf_k13 and k13;
    vars Raf_kf14 and kf14;
    vars Raf_k14 and k14;
    vars Raf_E and E;
    vars RAFstar and RAFstar;
    vars RAF and RAF;
    vars RasGTP and RasGTP;
    vars Akt_PIPP and Akt_PIPP;
  enddef;
  def map between geometry and RasGDPtoRasGTP for
    vars time and time;
    vars RasGDPtoRasGTP_kf11 and kf11;
    vars RasGDPtoRasGTP_k11 and k11;
    vars RasGDPtoRasGTP_V12 and V12;
    vars RasGDPtoRasGTP_k12 and k12;
    vars ShGS and ShGS;
    vars RasGTP and RasGTP;
    vars RasGDP and RasGDP;
  enddef;
  def map between geometry and tcr for
    vars time and time;
    vars tcr_k_f21 and k_f21;
    vars tcr_k_r21 and k_r21;
    vars tpa and tpa;
    vars tcr and tcr;
  enddef;
  def map between geometry and pzap70 for
    vars time and time;
    vars J3 and J3;
    vars J6 and J6;
    vars J12 and J12;
    vars pzap70 and pzap70;
    vars J71 and J71;
  enddef;
  def map between geometry and plc for
    vars time and time;
    vars plc_k_f23 and k_f23;
    vars plc_k_r23 and k_r23;
    vars plc_k_f24 and k_f24;
    vars plc_k_f25 and k_f25;
    vars plc_k_r25 and k_r25;
    vars plc and plc;
    vars GS and gs;
    vars J_plc_plc and J_plc_plc;
    vars J_pplc and J_pplc;
    vars pplc and pplc;
    vars pzap70 and pzap70;
  enddef;
  def map between geometry and shc for
    vars time and time;
    vars shc_k_f26 and k_f26;
    vars shc_k_r26 and k_r26;
    vars Shc and shc;
    vars pzap70 and pzap70;
  enddef;
  def map between geometry and lat for
    vars time and time;
    vars lat_k_f27 and k_f27;
    vars lat_k_r27 and k_r27;
    vars lat_k_f28 and k_f28;
    vars lat_k_f29 and k_f29;
    vars lat_k_r29 and k_r29;
    vars lat and lat;
    vars GS and gs;
    vars J_plat and J_plat;
    vars plat and plat;
    vars pzap70 and pzap70;
  enddef;
  def map between geometry and ERKPPtranslocation for
    vars time and time;
    vars ERKPP_k_f30 and k_f30;
    vars ERKPP and ERKPP;
    vars J31 and J31;
  enddef;
  def map between geometry and ERKPP_TNF for
    vars time and time;
    vars ERKPP_k_f31 and k_f31;
    vars ERKPP_k_f32 and k_f32;
    vars ERKPP_TNF_c and ERKPP_TNF_c;
    vars J31 and J31;
  enddef;
  def map between ERK and ERKPPtranslocation for
    vars J_ERKPP and J_ERKPP;
  enddef;
  def map between zap70 and geometry for
    vars time and time;
    vars plck and plck;
    vars lck and lck;
    vars zap70 and zap70;
    vars k_f1 and Zap70_k_f1;
    vars k_r1 and Zap70_k_r1;
    vars k_f2 and Zap70_k_f2;
    vars k_r2 and Zap70_k_r2;
    vars k_f3 and Zap70_k_f3;
    vars k_r3 and Zap70_k_r3;
    vars k_f4 and Zap70_k_f4;
    vars k_r4 and Zap70_k_r4;
    vars k_f5 and Zap70_k_f5;
    vars pzap70 and pzap70;
  enddef;
  def map between lat and pzap70 for
    vars J27 and J27;
  enddef;
  def map between plc and pzap70 for
    vars J23 and J23;
  enddef;
  def map between shc and pzap70 for
    vars J26 and J26;
  enddef;
  def map between ERKPPtranslocation and ERKPP_TNF for
    vars ERKPP_n and ERKPP_n;
  enddef;
  def map between tcr and zap70 for
    vars tpatcr and itam;
    vars J21 and J21;
  enddef;
  def map between plc and PI3K_hatakeyama for
    vars J25 and J25;
  enddef;
  def map between plc and pzap70 for
    vars J25 and J25;
  enddef;
  def map between shc and PI3K_hatakeyama for
    vars J26 and J26;
  enddef;
  def map between plc and shc for
    vars J26 and J26;
  enddef;
  def map between plc and lat for
    vars J27 and J27;
  enddef;
  def map between lat and PI3K_hatakeyama for
    vars J27 and J27;
  enddef;
  def map between fixed_parameters and geometry for
    vars ITG_k_f1 and ITG_k_f1;
    vars ITG_k_r1 and ITG_k_r1;
  enddef;
  def map between geometry and icam_activating_itg for
    vars time and time;
    vars icam and icam;
    vars icamitg and icamitg;
    vars itg and itg;
    vars ITG_k_f1 and k_f1;
    vars ITG_k_r1 and k_r1;
    vars J11 and J11;
  enddef;
  def map between geometry and ERKPP_to_IFN for
    vars ERKPP2cyt_k_f41 and k_f41;
    vars JERKPP_n_IFN and JERKPP_n_IFN;
  enddef;
  def map between geometry and ERKPP_to_GMCSF for
    vars ERKPP2cyt_k_f43 and k_f43;
    vars JERKPP_n_GMCSF and JERKPP_n_GMCSF;
  enddef;
  def map between ERKPPtranslocation and ERKPP_to_IFN for
    vars ERKPP_n and ERKPP_n;
  enddef;
  def map between ERKPPtranslocation and ERKPP_to_GMCSF for
    vars ERKPP_n and ERKPP_n;
  enddef;
  def map between geometry and intracellular_ERKPP_to_IFN for
    vars time and time;
    vars CytRel_k_f42 and k_f42;
    vars JERKPP_IFN_rel and JERKPP_IFN_rel;
    vars ERKPP_IFN_c and ERKPP_IFN_c;
    vars JERKPP_n_IFN and JERKPP_n_IFN;
  enddef;
  def map between geometry and intracellular_ERKPP_to_GMCSF for
    vars time and time;
    vars CytRel_k_f44 and k_f44;
    vars JERKPP_GMCSF_rel and JERKPP_GMCSF_rel;
    vars ERKPP_GMCSF_c and ERKPP_GMCSF_c;
    vars JERKPP_n_GMCSF and JERKPP_n_GMCSF;
  enddef;
  def map between geometry and IFN_c for
    vars NFAT_IFN_c and NFAT_IFN_c;
    vars ERKPP_IFN_c and ERKPP_IFN_c;
    vars IFN_c and IFN_c;
  enddef;
  def map between geometry and TNF_c for
    vars NFAT_TNF_c and NFAT_TNF_c;
    vars ERKPP_TNF_c and ERKPP_TNF_c;
    vars TNF_c and TNF_c;
  enddef;
  def map between geometry and GMCSF_c for
    vars GMCSF_c and GMCSF_c;
    vars NFAT_GSMCSF_c and NFAT_GSMCSF_c;
    vars ERKPP_GMCSF_c and ERKPP_GMCSF_c;
  enddef;
  def map between geometry and hE_activating_cd94 for
    vars time and time;
    vars nkg2c and nkg2c;
    vars plck and plck;
    vars d12 and d12;
    vars hE and hE;
    vars hE_activating_cd94_k_f8 and k_f8;
    vars hE_activating_cd94_k_r8 and k_r8;
    vars hE_activating_cd94_k_f9 and k_f9;
    vars hE_activating_cd94_k_r9 and k_r9;
    vars hE_activating_cd94_k_f10 and k_f10;
    vars hE_activating_cd94_k_r10 and k_r10;
    vars hE_activating_cd94_k_f11 and k_f11;
    vars J_hEpd12 and J_hEpd12;
    vars J_hEactivation and J_hEactivation;
    vars J9 and J9;
    vars hEpd12 and hEpd12;
    vars hEd12plck and hEd12plck;
    vars hEpd12cd45 and hEpd12cd45;
    vars J_hEinhibition and J_hEinhibition;
  enddef;
  def map between geometry and hC_activating_kir2ds1 for
    vars time and time;
    vars kir2ds1 and kir2ds1;
    vars hC and hC;
    vars d12 and d12;
    vars hC_plck and plck;
    vars J9 and J9;
    vars hCpd12 and hCpd12;
    vars hCpd12cd45 and hCpd12cd45;
    vars hC_activating_kir2ds1_k_f1 and k_f1;
    vars hC_activating_kir2ds1_k_r1 and k_r1;
    vars hC_activating_kir2ds1_k_f2 and k_f2;
    vars hC_activating_kir2ds1_k_r2 and k_r2;
    vars hC_activating_kir2ds1_k_f3 and k_f3;
    vars hC_activating_kir2ds1_k_r3 and k_r3;
    vars hC_activating_kir2ds1_k_f4 and k_f4;
    vars J_hCactivation and J_hCactivation;
    vars J_hCpd12 and J_hCpd12;
  enddef;
  def map between geometry and kir2dl for
    vars time and time;
    vars hC and hC;
    vars kir2dl and kir2dl;
    vars inhibition_shp and shp;
    vars inhibition_plck and plck;
    vars cd45 and cd45;
    vars pshp_kir2dl and pshp_kir2dl;
    vars hC_activating_kir2dl_k_f1 and k_f1;
    vars hC_activating_kir2dl_k_r1 and k_r1;
    vars hC_activating_kir2dl_k_f2 and k_f2;
    vars hC_activating_kir2dl_k_r2 and k_r2;
    vars hC_activating_kir2dl_k_f3 and k_f3;
    vars hC_activating_kir2dl_k_f4 and k_f4;
    vars hC_activating_kir2dl_k_r4 and k_r4;
    vars hC_activating_kir2dl_k_f5 and k_f5;
    vars hC_activating_kir2dl_k_f6 and k_f6;
    vars hC_activating_kir2dl_k_r6 and k_r6;
    vars hC_activating_kir2dl_k_f7 and k_f7;
    vars inhibition_J6 and J6;
    vars J_hCactivation and J_hCactivation;
  enddef;
  def map between geometry and hG_activating_kir2dl4 for
    vars time and time;
    vars hG and hG;
    vars pshp_dl4 and pshp_dl4;
    vars inhibition_kir2dl4 and kir2dl4;
    vars inhibition_shp and shp;
    vars inhibition_plck and plck;
    vars cd45 and cd45;
    vars hG_activating_kir2dl4_k_f11 and k_f11;
    vars hG_activating_kir2dl4_k_r11 and k_r11;
    vars hG_activating_kir2dl4_k_f12 and k_f12;
    vars hG_activating_kir2dl4_k_r12 and k_r12;
    vars hG_activating_kir2dl4_k_f13 and k_f13;
    vars hG_activating_kir2dl4_k_f14 and k_f14;
    vars hG_activating_kir2dl4_k_r14 and k_r14;
    vars hG_activating_kir2dl4_k_f15 and k_f15;
    vars hG_activating_kir2dl4_k_f16 and k_f16;
    vars hG_activating_kir2dl4_k_r16 and k_r16;
    vars hG_activating_kir2dl4_k_f17 and k_f17;
    vars inhibition_J16 and J16;
  enddef;
  def map between geometry and hG_activating_lilrb for
    vars time and time;
    vars hG and hG;
    vars lilrb and lilrb;
    vars pshp_lil and pshp_lil;
    vars inhibition_shp and shp;
    vars inhibition_plck and plck;
    vars cd45 and cd45;
    vars hG_activating_lilrb_k_f21 and k_f21;
    vars hG_activating_lilrb_k_r21 and k_r21;
    vars hG_activating_lilrb_k_f22 and k_f22;
    vars hG_activating_lilrb_k_r22 and k_r22;
    vars hG_activating_lilrb_k_f23 and k_f23;
    vars hG_activating_lilrb_k_f24 and k_f24;
    vars hG_activating_lilrb_k_r24 and k_r24;
    vars hG_activating_lilrb_k_f25 and k_f25;
    vars hG_activating_lilrb_k_f26 and k_f26;
    vars hG_activating_lilrb_k_r26 and k_r26;
    vars hG_activating_lilrb_k_f27 and k_f27;
    vars inhibition_J26 and J26;
  enddef;
  def map between geometry and hA_activating_kir3dl1 for
    vars time and time;
    vars hA and hA;
    vars kir3dl1 and kir3dl1;
    vars pshp_dl1 and pshp_dl1;
    vars inhibition_shp and shp;
    vars inhibition_plck and plck;
    vars cd45 and cd45;
    vars hA_activating_kir3dl1_k_f31 and k_f31;
    vars hA_activating_kir3dl1_k_r31 and k_r31;
    vars hA_activating_kir3dl1_k_f32 and k_f32;
    vars hA_activating_kir3dl1_k_r32 and k_r32;
    vars hA_activating_kir3dl1_k_f33 and k_f33;
    vars hA_activating_kir3dl1_k_f34 and k_f34;
    vars hA_activating_kir3dl1_k_r34 and k_r34;
    vars hA_activating_kir3dl1_k_f35 and k_f35;
    vars hA_activating_kir3dl1_k_f36 and k_f36;
    vars hA_activating_kir3dl1_k_r36 and k_r36;
    vars hA_activating_kir3dl1_k_f37 and k_f37;
    vars inhibition_J36 and J36;
  enddef;
  def map between geometry and hB_activating_kir3dl2 for
    vars time and time;
    vars hB and hB;
    vars kir3dl2 and kir3dl2;
    vars inhibition_shp and shp;
    vars inhibition_plck and plck;
    vars cd45 and cd45;
    vars pshp_dl2 and pshp_dl2;
    vars hB_activating_kir3dl2_k_f41 and k_f41;
    vars hB_activating_kir3dl2_k_r41 and k_r41;
    vars hB_activating_kir3dl2_k_f42 and k_f42;
    vars hB_activating_kir3dl2_k_r42 and k_r42;
    vars hB_activating_kir3dl2_k_f43 and k_f43;
    vars hB_activating_kir3dl2_k_f44 and k_f44;
    vars hB_activating_kir3dl2_k_r44 and k_r44;
    vars hB_activating_kir3dl2_k_f45 and k_f45;
    vars hB_activating_kir3dl2_k_f46 and k_f46;
    vars hB_activating_kir3dl2_k_r46 and k_r46;
    vars hB_activating_kir3dl2_k_f47 and k_f47;
    vars inhibition_J46 and J46;
  enddef;
  def map between geometry and hC_mapk for
    vars time and time;
    vars J_hCpd12 and J_hCpd12;
    vars zap70 and zap70;
    vars pLck and pLck;
    vars J3 and J3;
  enddef;
  def map between geometry and hE_mapk for
    vars time and time;
    vars J_hEpd12 and J_hEpd12;
    vars zap70 and zap70;
    vars pLck and pLck;
    vars J6 and J6;
  enddef;
  def map between geometry and icam_mapk for
    vars time and time;
    vars J11 and J11;
    vars J12 and J12;
    vars icamitg and icamitg;
    vars zap70 and zap70;
  enddef;
  def map between geometry and mapk_vav for
    vars time and time;
    vars J_vav and J_vav;
    vars J_pvav and J_pvav;
    vars plat and plat;
    vars J_plat and J_plat;
    vars J_plc_plc and J_plc_plc;
    vars J_pplc and J_pplc;
    vars plc and plc;
    vars pplc and pplc;
    vars vav and vav;
    vars lat and lat;
    vars pzap70 and pzap70;
  enddef;
  def map between RacPAK and mapk_vav for
    vars RacPAK_J31 and RacPAK_J31;
  enddef;
  def map between pvav_RacPAK and RacPAK for
    vars RacPAK_J31 and RacPAK_J31;
    vars RacPAK_J32 and RacPAK_J32;
  enddef;
  def map between geometry and pvav_RacPAK for
    vars time and time;
    vars RacGDP and RacGDP;
  enddef;
  def map between geometry and dupont_NFAT for
    vars time and time;
    vars IP3 and IP3;
    vars J_IP3 and J_IP3;
  enddef;
  def map between geometry and pi3k_vav for
    vars time and time;
    vars vav and vav;
    vars PI3Kstar and PI3Kstar;
  enddef;
  def map between pi3k_vav and mapk_vav for
    vars J61 and J61;
    vars J62 and J62;
  enddef;
  def map between PI3K and pi3k_vav for
    vars PI3K_J3 and PI3K_J3;
    vars J61 and J61;
  enddef;
  def map between geometry and PAK_MEK for
    vars time and time;
    vars PAKa and PAKa;
    vars J_MEK and J_MEK;
    vars J_MEKPP and J_MEKPP;
    vars PP2A and PP2A;
    vars MEK and MEK;
  enddef;
  def map between geometry and lat_plc for
    vars plat and plat;
    vars V_plc and V_plc;
    vars V_PLC_lat and V_PLC_lat;
    vars gamma and gamma;
  enddef;
  def map between geometry and shp for
    vars time and time;
    vars inhibition_shp and shp;
    vars pshp_kir2dl and pshp_kir2dl;
    vars pshp_dl4 and pshp_dl4;
    vars pshp_lil and pshp_lil;
    vars pshp_dl1 and pshp_dl1;
    vars pshp_dl2 and pshp_dl2;
    vars pshp_cd94 and pshp_cd94;
    vars J71 and J71;
    vars J72 and J72;
    vars J81 and J81;
    vars J82 and J82;
    vars J19 and J19;
    vars inhibition_J6 and J6;
    vars inhibition_J16 and J16;
    vars inhibition_J26 and J26;
    vars inhibition_J36 and J36;
    vars inhibition_J46 and J46;
  enddef;
  def map between geometry and dephospho_pzap_bySHP for
    vars time and time;
    vars zap70 and zap70;
    vars pzap70 and pzap70;
    vars J71 and J71;
    vars J72 and J72;
  enddef;
  def map between dephospho_pzap_bySHP and shp for
    vars pshp and pshp;
  enddef;
  def map between geometry and dephospho_pplc_bySHP for
    vars time and time;
    vars pshp and pshp;
    vars pplc and pplc;
    vars plc and plc;
    vars J81 and J81;
    vars J82 and J82;
  enddef;
  def map between geometry and calcium for
    vars time and time;
    vars stimEnd and stimEnd;
    vars Ca and Ca;
  enddef;
  def map between hG_activating_dl4 and hG_activating_kir2dl4 for
    vars J_hGdl4inhibition and J_hGdl4inhibition;
  enddef;
  def map between hG_activating_dl4 and hG_activating_lilrb for
    vars J_hGinhibitionlil and J_hGinhibitionlil;
  enddef;
  def map between hgdl4_FC and FCepsilonRI for
    vars J_hGdl4FC and J_hGdl4FC;
  enddef;
enddef;
// #NFATMyocyte_TomidaProtocol
// reference: Family Cooling; Given Mike; Orgname Auckland Bioengineering Institute; Orgunit University of Auckland; m.cooling@auckland.ac.nz; Family Hunter; Given Peter; Orgname Auckland Bioengineering Institute; Orgunit University of Auckland; p.hunter@auckland.ac.nz; Family Crampin; Given Edmund; Orgname Auckland Bioengineering Institute; Orgunit University of Auckland; e.crampin@auckland.ac.nz; title Sensitivity of NFAT Cycling to Cytosolic Calcium Concentration: Implications for Hypertrophic Signals in Cardiac Myocytes; volume 96; first_page 2095; last_page 2104; title Biophysical Journal; W3CDTF 2009-03-18 00:00
// reference: _1 Signal Transduction; _2 Calcium Dynamics; _3 Gene Regulation; _4 Excitation-Transcription Coupling; _5 NFAT; subject_type keyword
