<?xml version='1.0'?>
<model name="inhibition_receptor" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <!--
        *******************************************************
        ***         U   N   I   T   S                       ***
        *******************************************************
        -->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <!--*********************-->
    <component name="inhibition_receptor">
        <variable name="time" public_interface="in" units="second"/>
        <variable name="k_f1" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r1" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f2" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r2" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f3" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f4" public_interface="in" units="second_order_rate_constant"/>
        <variable name="k_r4" public_interface="in" units="first_order_rate_constant"/>
        <variable name="k_f5" public_interface="in" units="first_order_rate_constant"/>
        <variable name="ligand" public_interface="in" units="nM"/>
        <variable name="receptor" public_interface="in" units="nM"/>
        <variable name="shp" public_interface="in" units="nM"/>
        <variable name="plck" public_interface="in" units="nM"/>
        <variable initial_value="0" name="ligand_receptor" units="nM"/>
        <variable initial_value="0" name="ligand_preceptor" units="nM"/>
        <variable initial_value="0" name="ligand_receptor_plck" units="nM"/>
        <variable initial_value="0" name="ligand_preceptor_shp" units="nM"/>
        <variable name="J1" units="flux"/>
        <variable name="J2" units="flux"/>
        <variable name="J3" units="flux"/>
        <variable name="J4" units="flux"/>
        <variable name="J5" units="flux"/>
        <variable name="J_shp_activated" public_interface="out" units="flux"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>ligand</ci>
                        <ci>receptor</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>ligand_receptor</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f2</ci>
                        <ci>ligand_receptor</ci>
                        <ci>plck</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r2</ci>
                        <ci>ligand_receptor_plck</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <times/>
                    <ci>k_f3</ci>
                    <ci>ligand_receptor_plck</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f4</ci>
                        <ci>ligand_preceptor</ci>
                        <ci>shp</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r4</ci>
                        <ci>ligand_preceptor_shp</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <times/>
                    <ci>k_f5</ci>
                    <ci>ligand_preceptor_shp</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_shp_activated</ci>
                <ci>J5</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>receptor</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ligand_receptor</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J1</ci>
                        <ci>J2</ci>
                    </apply>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ligand_receptor_plck</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ligand_preceptor</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J3</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>ligand_preceptor_shp</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J4</ci>
                    <ci>J5</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
