<?xml version='1.0'?>
<model name="vav" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <!--def unit uM as
 unit mole {pref: micro};
  unit liter {expo: -1};
enddef;-->
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <!--def unit per_s as
unit s {expo: -1};
enddef;-->
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <!--def unit uM_per_s as
unit uM;
unit s {expo: -1};
enddef;-->
    <units name="flux">
        <unit units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--def unit per_uM_per_s as
unit uM {expo: -1};
unit s {expo: -1};
enddef;-->
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="time" public_interface="out" units="s"/>
    </component>
    <component name="vav_activation">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="J1" units="flux"/>
        <variable name="J2" units="flux"/>
        <variable name="J3" units="flux"/>
        <variable name="J4" units="flux"/>
        <variable name="J5" units="flux"/>
        <variable name="J6" units="flux"/>
        <variable name="J7" units="flux"/>
        <variable name="J8" units="flux"/>
        <variable name="J12" public_interface="in" units="flux"/>
        <variable name="J13" public_interface="in" units="flux"/>
        <variable name="J19" public_interface="in" units="flux"/>
        <variable initial_value="42.743" name="k_f1" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="6.1" name="k_r1" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="252742" name="k_f2" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="568740" name="k_r2" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="1847" name="k_f3" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="18.91" name="k_r3" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="4.5" name="k_f4" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="290.275" name="k_f5" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="419.156" name="k_r5" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="354.18" name="k_f6" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="42394.5" name="k_f7" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="5550.59" name="k_r7" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="974.2" name="k_f8" public_interface="out" units="first_order_rate_constant"/>
        <variable name="mica" public_interface="in" units="nM"/>
        <variable name="nkg2d" public_interface="in" units="nM"/>
        <variable initial_value="0" name="mica2d" units="nM"/>
        <variable initial_value="10970" name="D10" units="nM"/>
        <variable initial_value="0" name="mica2dD10" units="nM"/>
        <variable initial_value="237790" name="plck" public_interface="out" units="nM"/>
        <variable initial_value="0" name="lck" public_interface="out" units="nM"/>
        <variable initial_value="39180" name="cd45" public_interface="out" units="nM"/>
        <variable initial_value="0" name="mica2dpD10" units="nM"/>
        <variable initial_value="190" name="vav" public_interface="out" units="nM"/>
        <variable initial_value="0" name="mica2dpD10vav" units="nM"/>
        <variable name="pvav" public_interface="in" units="nM"/>
        <variable initial_value="0" name="mica2dD10pLck" units="nM"/>
        <variable initial_value="0" name="mica2dpD10cd45" units="nM"/>
        <variable name="J_vav" public_interface="out" units="flux"/>
        <variable name="J_pvav" public_interface="out" units="flux"/>
        <!--Flux-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>mica</ci>
                        <ci>nkg2d</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>mica2d</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f2</ci>
                        <ci>mica2d</ci>
                        <ci>D10</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r2</ci>
                        <ci>mica2dD10</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f3</ci>
                        <ci>mica2dD10</ci>
                        <ci>plck</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r3</ci>
                        <ci>mica2dD10pLck</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <times/>
                    <ci>k_f4</ci>
                    <ci>mica2dD10pLck</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f5</ci>
                        <ci>mica2dpD10</ci>
                        <ci>cd45</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r5</ci>
                        <ci>mica2dpD10cd45</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J6</ci>
                <apply>
                    <times/>
                    <ci>k_f6</ci>
                    <ci>mica2dpD10cd45</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f7</ci>
                        <ci>mica2dpD10</ci>
                        <ci>vav</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r7</ci>
                        <ci>mica2dpD10vav</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J8</ci>
                <apply>
                    <times/>
                    <ci>k_f8</ci>
                    <ci>mica2dpD10vav</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_vav</ci>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J7</ci>
                    </apply>
                    <ci>J19</ci>
                </apply>
            </apply>
            <!--rate of vav phosphorylation-->
            <apply>
                <eq/>
                <ci>J_pvav</ci>
                <apply>
                    <minus/>
                    <ci>J8</ci>
                    <ci>J19</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>mica</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>nkg2d</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>mica2d</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>D10</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>plck</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>J3</ci>
                    </apply>
                    <ci>J12</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lck</ci>
                </apply>
                <apply>
                    <plus/>
                    <ci>J3</ci>
                    <ci>J13</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>mica2dD10</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J2</ci>
                        <ci>J3</ci>
                    </apply>
                    <ci>J6</ci>
                    <ci>J8</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>mica2dD10pLck</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J3</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>mica2dpD10</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>J4</ci>
                        <ci>J5</ci>
                    </apply>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>mica2dpD10cd45</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J5</ci>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>mica2dpD10vav</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J7</ci>
                    <ci>J8</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="vav_inhibition">
        <variable name="time" public_interface="in" units="s"/>
        <variable name="J11" units="flux"/>
        <variable name="J12" public_interface="out" units="flux"/>
        <variable name="J13" public_interface="out" units="flux"/>
        <variable name="J14" units="flux"/>
        <variable name="J15" units="flux"/>
        <variable name="J16" units="flux"/>
        <variable name="J17" units="flux"/>
        <variable name="J19" public_interface="out" units="flux"/>
        <variable name="J_hEinhibition" public_interface="out" units="flux"/>
        <variable initial_value="612380" name="k_f11" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="1800" name="k_r11" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="47260.5" name="k_f12" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="5.935" name="k_r12" public_interface="out" units="nM"/>
        <variable initial_value="3.178" name="k_f13" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="30.4" name="k_f14" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="46.82" name="k_r14" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="50001.3" name="k_f15" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="110000" name="k_f16" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="0600" name="k_r16" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="34.0776" name="k_f17" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="85614.7" name="k_f19" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="1185.74" name="K19" public_interface="out" units="nM"/>
        <variable name="hE" public_interface="in" units="nM"/>
        <variable name="nkg2a" public_interface="in" units="nM"/>
        <variable initial_value="0" name="hE2a" units="nM"/>
        <variable name="plck" public_interface="in" units="nM"/>
        <variable name="cd45" public_interface="in" units="nM"/>
        <variable initial_value="0" name="hEp2a" units="nM"/>
        <variable initial_value="0" name="hE2aplck" units="nM"/>
        <variable initial_value="0" name="hEp2acd45" units="nM"/>
        <variable initial_value="3470" name="shp" units="nM"/>
        <variable initial_value="0" name="hEp2ashp" units="nM"/>
        <variable initial_value="0" name="pshp_cd94" public_interface="out" units="nM"/>
        <variable name="pvav" public_interface="in" units="nM"/>
        <variable name="lck" public_interface="in" units="nM"/>
        <variable name="pshp" public_interface="in" units="nM"/>
        <!--Flux-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J11</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f11</ci>
                        <ci>hE</ci>
                        <ci>nkg2a</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r11</ci>
                        <ci>hE2a</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J12</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f12</ci>
                        <ci>hE2a</ci>
                        <ci>plck</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r12</ci>
                        <ci>hE2aplck</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J13</ci>
                <apply>
                    <times/>
                    <ci>k_f13</ci>
                    <ci>hE2aplck</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J14</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f14</ci>
                        <ci>hEp2a</ci>
                        <ci>cd45</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r14</ci>
                        <ci>hEp2acd45</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J15</ci>
                <apply>
                    <times/>
                    <ci>k_f15</ci>
                    <ci>hEp2acd45</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J16</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f16</ci>
                        <ci>hEp2a</ci>
                        <ci>shp</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r16</ci>
                        <ci>hEp2ashp</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J17</ci>
                <apply>
                    <times/>
                    <ci>k_f17</ci>
                    <ci>hEp2ashp</ci>
                </apply>
            </apply>
            <!-- rate of vav dephosphorylation-->
            <apply>
                <eq/>
                <ci>J19</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f19</ci>
                        <ci>pshp</ci>
                        <ci>pvav</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K19</ci>
                        <ci>pvav</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_hEinhibition</ci>
                <apply>
                    <minus/>
                    <ci>J11</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>nkg2a</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J11</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hE2a</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J11</ci>
                        <ci>J12</ci>
                    </apply>
                    <ci>J15</ci>
                    <ci>J17</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hEp2a</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>J13</ci>
                        <ci>J14</ci>
                    </apply>
                    <ci>J16</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hE2aplck</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J12</ci>
                    <ci>J13</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hEp2acd45</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J14</ci>
                    <ci>J15</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hEp2ashp</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J16</ci>
                    <ci>J17</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>shp</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J16</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>pshp_cd94</ci>
                </apply>
                <ci>J17</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="vav_activation" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="vav_inhibition" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="vav_activation" component_2="vav_inhibition"/>
        <map_variables variable_1="J19" variable_2="J19"/>
        <map_variables variable_1="J12" variable_2="J12"/>
        <map_variables variable_1="J13" variable_2="J13"/>
        <map_variables variable_1="plck" variable_2="plck"/>
        <map_variables variable_1="lck" variable_2="lck"/>
        <map_variables variable_1="cd45" variable_2="cd45"/>
        <map_variables variable_1="pvav" variable_2="pvav"/>
    </connection>
</model>
